PsychoPy2experiment version="1.90.1"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [800, 600]
  Full-screen window = False
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Show info dlg = False
  expName = vvk
  Screen = 1
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Routines
  Routine get_speech
    TextComponent say_something
      text [set every repeat] = $WordList
      stopVal [duration (s)] = 2.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent record
      Begin Experiment:
        # -*- coding: utf-8 -*-
      Begin Routine:
        # Create a voice-key to be used:
        vpvk = vk.OnsetVoiceKey(
            sec=2.5,
            file_out='data/trial_'+str(trials.thisN).zfill(3)+'_'+WordList+'.wav')

        # Start it recording (and detecting):
        vpvk.start()  # non-blocking; don't block when using Builder
      End Routine:
        # The recorded sound is saved upon .stop() by default. But
        # its a good idea to call .stop() explicitly, eg, if there's much slippage:

        vpvk.stop()

        # Add the detected time into the PsychoPy data file:
        #thisExp.addData('vocal_RT', round(vpvk.event_onset, 3))
        thisExp.addData('bad_baseline', vpvk.bad_baseline)
        thisExp.addData('filename', vpvk.filename)
        thisExp.nextEntry()
      Each Frame:
        # Nothing needed every frame for this demo
    KeyboardComponent key_resp_4
      stopVal [duration (s)] = 2.5
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space','down','3','1','2'
      startVal [time (s)] = 0.0
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  Routine the_end
    TextComponent text_3
      stopVal [duration (s)] = 3.0
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        The end.

        Data + recordings are in folder data/
  Routine wait
    TextComponent text
      text = +
      stopVal [duration (s)] = 0.75
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine instructions
    CodeComponent init_pyo
      Begin Experiment:
        # The import and pyo_init should always come early on:
        import psychopy.voicekey as vk
        vk.pyo_init(rate=44100, buffersize=32)

        # What signaler class to use? Here just the demo signaler:
        from psychopy.voicekey.demo_vks import DemoVoiceKeySignal as Signaler

        # To use a LabJack as a signaling device:
        #from voicekey.signal.labjack_vks import LabJackU3VoiceKeySignal as Signaler
    TextComponent text_2
      startVal [time (s)] = 0.0
      letterHeight = 0.06
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      text:
        Task: Read each word out loud within
        2 seconds. There will be 3 trials.

        Press any key to start.
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = AMNARTv2.xls
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([(u'WordList', u'ache')]),
      OrderedDict([(u'WordList', u'aisle')]),
      OrderedDict([(u'WordList', u'capon')]),
      OrderedDict([(u'WordList', u'debt')]),
      OrderedDict([(u'WordList', u'chord')]),
      OrderedDict([(u'WordList', u'heir')]),
      OrderedDict([(u'WordList', u'deny')]),
      OrderedDict([(u'WordList', u'bouquet')]),
      OrderedDict([(u'WordList', u'caprice')]),
      OrderedDict([(u'WordList', u'gauge')]),
      OrderedDict([(u'WordList', u'worsted')]),
      OrderedDict([(u'WordList', u'depot')]),
      OrderedDict([(u'WordList', u'nausea')]),
      OrderedDict([(u'WordList', u'na\xefve')]),
      OrderedDict([(u'WordList', u'subtle')]),
      OrderedDict([(u'WordList', u'pugilist')]),
      OrderedDict([(u'WordList', u'fetal')]),
      OrderedDict([(u'WordList', u'blatant')]),
      OrderedDict([(u'WordList', u'placebo')]),
      OrderedDict([(u'WordList', u'hiatus')]),
      OrderedDict([(u'WordList', u'simile')]),
      OrderedDict([(u'WordList', u'meringue')]),
      OrderedDict([(u'WordList', u'sieve')]),
      OrderedDict([(u'WordList', u'chassis')]),
      OrderedDict([(u'WordList', u'cellist')]),
      OrderedDict([(u'WordList', u'algae')]),
      OrderedDict([(u'WordList', u'superfluous')]),
      OrderedDict([(u'WordList', u'chamois')]),
      OrderedDict([(u'WordList', u'thyme')]),
      OrderedDict([(u'WordList', u'apropos')]),
      OrderedDict([(u'WordList', u'virulent')]),
      OrderedDict([(u'WordList', u'zealot')]),
      OrderedDict([(u'WordList', u'fa\xe7ade')]),
      OrderedDict([(u'WordList', u'cabal')]),
      OrderedDict([(u'WordList', u'abstemious')]),
      OrderedDict([(u'WordList', u'd\xe9tente')]),
      OrderedDict([(u'WordList', u'scion')]),
      OrderedDict([(u'WordList', u'papyrus')])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
    Routine get_speech
    Routine wait
  LoopTerminator trials
  Routine the_end
