PsychoPy2experiment version="1.90.1"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = pix
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  expName = AMNARTv3
  Screen = 1
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Routines
  Routine Thanks
    TextComponent text_3
      text = Thank You
      stopVal [duration (s)] = 3
      startVal [time (s)] = 0.0
      letterHeight = 45
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  Routine Inst
    TextComponent Instr
      wrapWidth = 1000
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 45
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      text:
        This is a test of reading skills.

        You will be shown one word at a time on the screen.
        I want you to read each word.
        There are many words that you probably won't recognise, in fact most people don't know them, so just have a guess at these.

        Press any key to begin.
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine CrossHair
    TextComponent text_2
      text = +
      stopVal [duration (s)] = 0.5
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 60
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  Routine Trial
    TextComponent text
      text [set every repeat] = $WordList
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 60
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'left','right','down'
      startVal [time (s)] = 0.0
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Flow
  Routine Inst
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = AMNARTv2.xls
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([(u'WordList', u'ache')]),
      OrderedDict([(u'WordList', u'fa\xe7ade')]),
      OrderedDict([(u'WordList', u'aisle')]),
      OrderedDict([(u'WordList', u'capon')]),
      OrderedDict([(u'WordList', u'debt')]),
      OrderedDict([(u'WordList', u'chord')]),
      OrderedDict([(u'WordList', u'heir')]),
      OrderedDict([(u'WordList', u'deny')]),
      OrderedDict([(u'WordList', u'bouquet')]),
      OrderedDict([(u'WordList', u'caprice')]),
      OrderedDict([(u'WordList', u'gauge')]),
      OrderedDict([(u'WordList', u'worsted')]),
      OrderedDict([(u'WordList', u'depot')]),
      OrderedDict([(u'WordList', u'nausea')]),
      OrderedDict([(u'WordList', u'na\xefve')]),
      OrderedDict([(u'WordList', u'subtle')]),
      OrderedDict([(u'WordList', u'pugilist')]),
      OrderedDict([(u'WordList', u'fetal')]),
      OrderedDict([(u'WordList', u'blatant')]),
      OrderedDict([(u'WordList', u'placebo')]),
      OrderedDict([(u'WordList', u'hiatus')]),
      OrderedDict([(u'WordList', u'simile')]),
      OrderedDict([(u'WordList', u'meringue')]),
      OrderedDict([(u'WordList', u'sieve')]),
      OrderedDict([(u'WordList', u'chassis')]),
      OrderedDict([(u'WordList', u'cellist')]),
      OrderedDict([(u'WordList', u'algae')]),
      OrderedDict([(u'WordList', u'superfluous')]),
      OrderedDict([(u'WordList', u'chamois')]),
      OrderedDict([(u'WordList', u'thyme')]),
      OrderedDict([(u'WordList', u'apropos')]),
      OrderedDict([(u'WordList', u'virulent')]),
      OrderedDict([(u'WordList', u'zealot')]),
      OrderedDict([(u'WordList', u'fa\xe7ade')]),
      OrderedDict([(u'WordList', u'cabal')]),
      OrderedDict([(u'WordList', u'abstemious')]),
      OrderedDict([(u'WordList', u'd\xe9tente')]),
      OrderedDict([(u'WordList', u'scion')])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
    Routine Trial
    Routine CrossHair
  LoopTerminator trials
  Routine Thanks
