PsychoPy2experiment version="1.90.1"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = pix
  Window size (pixels) = [1440, 900]
  Full-screen window = False
  expName = AMNARTwithRecording
  Screen = 1
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Routines
  Routine trial
    TextComponent text
      text [set every repeat] = $WordList
      stopVal [duration (s)] = 3
      startVal [time (s)] = 0.0
      letterHeight = 80
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    KeyboardComponent key_resp_2
      stopVal [duration (s)] = 3
      forceEndRoutine = False
      allowedKeys = 'left','right'
      startVal [time (s)] = 0.0
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    MicrophoneComponent mic_1
      stereo = False
      stopVal [duration (s)] = 3
      startVal [time (s)] = 0.0
  Routine ThankYou
    TextComponent Thanks
      text = Thank you
      stopVal [duration (s)] = 3
      startVal [time (s)] = 0.0
      letterHeight = 40
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  Routine CrossHair
    TextComponent text_2
      text = +
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      letterHeight = 40
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  Routine Instructions
    TextComponent Instr
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 40
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      text:
        This is a test of reading skills.

        You will be shown one word at a time on the screen.
        I want you to read each word. There are many worss that you probably won't recognise, in fact most people don't know them, so just have a guess at these, O.K.?

        Press any key to begin.
    KeyboardComponent EndInstr
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = ../AMNART/AMNART.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [{'WordList': u'ache'},
      {'WordList': u'aisle'},
      {'WordList': u'capon'},
      {'WordList': u'debt'},
      {'WordList': u'chord'},
      {'WordList': u'heir'},
      {'WordList': u'deny'},
      {'WordList': u'bouquet'},
      {'WordList': u'caprice'},
      {'WordList': u'gauge'},
      {'WordList': u'worsted'},
      {'WordList': u'depot'},
      {'WordList': u'nausea'},
      {'WordList': u'naive'},
      {'WordList': u'subtle'},
      {'WordList': u'pubilist'},
      {'WordList': u'fetal'},
      {'WordList': u'blatant'},
      {'WordList': u'placebo'},
      {'WordList': u'hiatus'},
      {'WordList': u'simile'},
      {'WordList': u'meringue'},
      {'WordList': u'sieve'},
      {'WordList': u'chassis'},
      {'WordList': u'cellist'},
      {'WordList': u'algae'},
      {'WordList': u'superfluous'},
      {'WordList': u'chamois'},
      {'WordList': u'thyme'},
      {'WordList': u'apropos'},
      {'WordList': u'virulent'},
      {'WordList': u'zealot'},
      {'WordList': u'facade'},
      {'WordList': u'cabal'},
      {'WordList': u'abstemious'},
      {'WordList': u'detente'},
      {'WordList': u'scion'},
      {'WordList': u'papyrus'},
      {'WordList': u'quadruped'},
      {'WordList': u'prelate'},
      {'WordList': u'epitome'},
      {'WordList': u'beatify'},
      {'WordList': u'hyperbole'},
      {'WordList': u'imbroglio'},
      {'WordList': u'syncope'}]
    Routine trial
    Routine CrossHair
  LoopTerminator trials
  Routine ThankYou
