PsychoPy2experiment version="1.85.1"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1000, 800]
  Full-screen window = False
  Show info dlg = False
  expName = Antonyms
  Screen = 1
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Routines
  Routine GetReady
    TextComponent GetRead
      color = black
      text = Get Ready
      stopVal [duration (s)] = 2
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 40
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  Routine ShortInstr
    TextComponent Instruct
      wrapWidth = 600
      color = black
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 40
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      text:
        Press the number associated with the word that is most nearly the OPPOSITE in meaning as the word in capital letters.

        Press any key to begin.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Feedback
    CodeComponent code
      Begin Experiment:
        msg = ''
      Begin Routine:
        if resp.corr:#stored on last run routine
          msg="Correct!"
        else:
          msg="Oops! That was wrong"
    TextComponent text_3
      wrapWidth = 600
      color = black
      text [set every repeat] = $msg
      stopVal [duration (s)] = 1.5
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 50
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  Routine ITI
    TextComponent text_2
      color = black
      text = +
      stopVal [duration (s)] = 1.5
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 60
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  Routine trial
    PolygonComponent polygon
      fillColor = $[0,0,0]
      pos = (0, 200)
      lineWidth = 3
      units = pix
      lineColor = $[-1,-1,-1]
      startVal [time (s)] = 0.0
      size = (500, 150)
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    TextComponent TestWord
      color = black
      text [set every repeat] = $Word
      pos = (0, 200)
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 60
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    TextComponent Resp1
      color = black
      text [set every repeat] = $Choice1
      pos = (0, 40)
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 50
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    TextComponent Resp2
      color = black
      text [set every repeat] = $Choice2
      pos = (0, -20)
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 50
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    TextComponent Resp3
      color = black
      text [set every repeat] = $Choice3
      pos = (0, -80)
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 50
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    TextComponent Resp4
      color = black
      text [set every repeat] = $Choice4
      pos = (0, -140)
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 50
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    KeyboardComponent resp
      correctAns = $Corr
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = '1','2','3','4'
      startVal [time (s)] = 0.0
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  Routine ThankYou
    TextComponent Merci
      color = black
      text = Thank you
      stopVal [duration (s)] = 1.0
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 50
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  Routine LongInstr
    TextComponent text
      wrapWidth = 800
      color = black
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 30
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      text:
        Antonyms Vocabulary

        Each item in this test consistes of a word in capital letters followed by four words. Press the number assoiated with the word that is most nearly the OPPOSITE in meaning as the word in capital letters.

        Since some of the items require you to distinguish fine shades of meaning, consider all the choices before deciding which is the best. Please guess if you are unsure since there is no penalty for incorrect responses.

        Press any key to begin.
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine LongInstr
  Routine GetReady
  LoopInitiator Practice loopType="TrialHandler"
    conditionsFile = AntonymsTest - Sheet1.csv
    loopType = random
    nReps = 1
    Selected rows = [1,2,3,4]
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    conditions:
      [{'Word': u'COMPLAISANT', 'Choice4': u'ugly', 'Choice1': u'distasteful', 'Choice2': u'recalcitrant', 'Choice3': u'alone', 'Corr': 2},
      {'Word': u'SATED', 'Choice4': u'fulfilled', 'Choice1': u'famished', 'Choice2': u'finished', 'Choice3': u'finicky', 'Corr': 1},
      {'Word': u'ALOOF', 'Choice4': u'manly', 'Choice1': u'happy', 'Choice2': u'deadly', 'Choice3': u'gregarious', 'Corr': 3},
      {'Word': u'ABOMINATE', 'Choice4': u'deplore', 'Choice1': u'adore', 'Choice2': u'despair', 'Choice3': u'abate', 'Corr': 1},
      {'Word': u'SOMNOLENT', 'Choice4': u'wide-awake', 'Choice1': u'stubborn', 'Choice2': u'sleepy', 'Choice3': u'worthy', 'Corr': 4},
      {'Word': u'APATHETIC', 'Choice4': u'waywardness', 'Choice1': u'interested', 'Choice2': u'bizarre', 'Choice3': u'slothful', 'Corr': 1},
      {'Word': u'CORPULENT', 'Choice4': u'entrepreneur', 'Choice1': u'sallow', 'Choice2': u'affiliated', 'Choice3': u'emaciated', 'Corr': 3},
      {'Word': u'INSCRUTABLE', 'Choice4': u'factoid', 'Choice1': u'comprehensive', 'Choice2': u'demanding', 'Choice3': u'peril', 'Corr': 1},
      {'Word': u'VERBOSE', 'Choice4': u'taciturn', 'Choice1': u'garrulous', 'Choice2': u'magnificent', 'Choice3': u'grandiloquent', 'Corr': 4},
      {'Word': u'SURLY', 'Choice4': u'fickle', 'Choice1': u'manly', 'Choice2': u'good-humoured', 'Choice3': u'massive', 'Corr': 2},
      {'Word': u'SPORADIC', 'Choice4': u'summery', 'Choice1': u'germinal', 'Choice2': u'antiseptic', 'Choice3': u'incessant', 'Corr': 3}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
    Routine trial
    Routine Feedback
    Routine ITI
  LoopTerminator Practice
  Routine ShortInstr
  Routine GetReady
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = AntonymsTest - Sheet1.csv
    loopType = random
    nReps = 1
    Selected rows = [5,6,7,8,9,10,11,12,13,14,15,16,17,18,19]
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    conditions:
      [{'Choice4': u'ddd', 'Word': u'AAAAAA', 'Choice1': u'aaa', 'Choice2': u'bbb', 'Choice3': u'ccc'},
      {'Choice4': u'ddd', 'Word': u'BBBBBB', 'Choice1': u'aaa', 'Choice2': u'bbb', 'Choice3': u'ccc'},
      {'Choice4': u'hhh', 'Word': u'CCCCC', 'Choice1': u'eee', 'Choice2': u'fff', 'Choice3': u'ggg'},
      {'Choice4': u'lll', 'Word': u'DDD', 'Choice1': u'iii', 'Choice2': u'jjj', 'Choice3': u'kkk'},
      {'Choice4': u'ppp', 'Word': u'EEE', 'Choice1': u'mmm', 'Choice2': u'nnn', 'Choice3': u'ooo'}]
    Routine trial
    Routine ITI
  LoopTerminator trials
  Routine ThankYou
