PsychoPy2experiment version="1.90.3"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1000, 800]
  Full-screen window = False
  Show info dlg = False
  expName = Antonymsv3
  Screen = 1
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Routines
  Routine GetReady
    TextComponent GetRead
      color = black
      text = Get Ready
      stopVal [duration (s)] = 2
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 40
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  Routine ShortInstr
    TextComponent Instruct
      wrapWidth = 600
      color = black
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 40
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      text:
        Press the number associated with the word that is most nearly the OPPOSITE in meaning as the word in capital letters.

        Press any key to begin.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Feedback
    CodeComponent code
      Begin Experiment:
        msg = ''
      Begin Routine:
        if resp.corr:#stored on last run routine
          msg="Correct!"
        else:
          msg="Oops! That was wrong"
      Each Frame:
        if mouse.isPressedIn(stimulus):
            if stimulus.image == stimulus_Corr:
                practice_resp = 1 # correct click
            else:
                practice_resp = 0 # incorrect click
            continueRoutine = False
        else:
            practice_resp = -1  # no click.
            # will continue with the routine.
    TextComponent text_3
      wrapWidth = 600
      color = black
      text [set every repeat] = $msg
      stopVal [duration (s)] = 1.5
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 50
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  Routine ThankYou
    TextComponent Merci
      color = black
      text = Thank you
      stopVal [duration (s)] = 1.0
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 50
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  Routine ITI
    TextComponent text_2
      color = black
      text = +
      stopVal [duration (s)] = 1.5
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 60
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  Routine trial
    PolygonComponent polygon
      pos = (0, 200)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (500, 150)
      fillColor = $[0,0,0]
      units = pix
      lineColor = $[-1,-1,-1]
      lineWidth = 3
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    TextComponent TestWord
      color = black
      text [set every repeat] = $Word
      pos = (0, 200)
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 60
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    KeyboardComponent resp
      correctAns = $Corr
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = '1','2','3','4'
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      timeRelativeTo = routine
      forceEndRoutineOnPress = valid click
      clickable = Resp1,Resp2,Resp3,Resp4
      startVal [time (s)] = 0.0
      saveMouseState = final
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    PolygonComponent Resp1Box
      pos = (-150, -100)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (300, 100)
      fillColor = $[0,0,0]
      lineColor = $[-1,-1,-1]
      lineWidth = 3
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    PolygonComponent Resp2Box
      pos = (150, -100)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (300, 100)
      fillColor = $[0,0,0]
      lineColor = $[-1,-1,-1]
      lineWidth = 3
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    PolygonComponent Resp3Box
      pos = (-150, -250)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (300, 100)
      fillColor = $[0,0,0]
      lineColor = $[-1,-1,-1]
      lineWidth = 3
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    PolygonComponent Resp4Box
      pos = (150, -250)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (300, 100)
      fillColor = $[0,0,0]
      lineColor = $[-1,-1,-1]
      lineWidth = 3
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    TextComponent Resp1
      color = black
      text [set every repeat] = $Choice1
      pos = (-150, -100)
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 50
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    TextComponent Resp2
      color = black
      text [set every repeat] = $Choice2
      pos = (150, -100)
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 50
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    TextComponent Resp3
      color = black
      text [set every repeat] = $Choice3
      pos = (-150, -250)
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 50
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    TextComponent Resp4
      color = black
      text [set every repeat] = $Choice4
      pos = (150, -250)
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 50
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  Routine LongInstr
    TextComponent text
      wrapWidth = 800
      color = black
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 30
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      text:
        Antonyms Vocabulary

        Each item in this test consistes of a word in capital letters followed by four words. Press the number assoiated with the word that is most nearly the OPPOSITE in meaning as the word in capital letters.

        Since some of the items require you to distinguish fine shades of meaning, consider all the choices before deciding which is the best. Please guess if you are unsure since there is no penalty for incorrect responses.

        Press any key to begin.
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine LongInstr
  Routine GetReady
  LoopInitiator Practice loopType="TrialHandler"
    conditionsFile = ../../CompanionFolderForCognitiveTasks/AntonymsTest - Sheet1.csv
    loopType = random
    nReps = 1
    Selected rows = [1,2,3,4]
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    conditions:
      [OrderedDict([(u'Word', u'COMPLAISANT'), (u'Choice1', u'distasteful'), (u'Choice2', u'recalcitrant'), (u'Choice3', u'alone'), (u'Choice4', u'ugly'), (u'Corr', 2)]),
      OrderedDict([(u'Word', u'SATED'), (u'Choice1', u'famished'), (u'Choice2', u'finished'), (u'Choice3', u'finicky'), (u'Choice4', u'fulfilled'), (u'Corr', 1)]),
      OrderedDict([(u'Word', u'ALOOF'), (u'Choice1', u'happy'), (u'Choice2', u'deadly'), (u'Choice3', u'gregarious'), (u'Choice4', u'manly'), (u'Corr', 3)]),
      OrderedDict([(u'Word', u'ABOMINATE'), (u'Choice1', u'adore'), (u'Choice2', u'despair'), (u'Choice3', u'abate'), (u'Choice4', u'deplore'), (u'Corr', 1)]),
      OrderedDict([(u'Word', u'SOMNOLENT'), (u'Choice1', u'stubborn'), (u'Choice2', u'sleepy'), (u'Choice3', u'worthy'), (u'Choice4', u'wide-awake'), (u'Corr', 4)]),
      OrderedDict([(u'Word', u'APATHETIC'), (u'Choice1', u'interested'), (u'Choice2', u'bizarre'), (u'Choice3', u'slothful'), (u'Choice4', u'waywardness'), (u'Corr', 1)]),
      OrderedDict([(u'Word', u'CORPULENT'), (u'Choice1', u'sallow'), (u'Choice2', u'affiliated'), (u'Choice3', u'emaciated'), (u'Choice4', u'entrepreneur'), (u'Corr', 3)]),
      OrderedDict([(u'Word', u'INSCRUTABLE'), (u'Choice1', u'comprehensive'), (u'Choice2', u'demanding'), (u'Choice3', u'peril'), (u'Choice4', u'factoid'), (u'Corr', 1)]),
      OrderedDict([(u'Word', u'VERBOSE'), (u'Choice1', u'garrulous'), (u'Choice2', u'magnificent'), (u'Choice3', u'grandiloquent'), (u'Choice4', u'taciturn'), (u'Corr', 4)])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
    Routine trial
    Routine Feedback
    Routine ITI
  LoopTerminator Practice
  Routine ShortInstr
  Routine GetReady
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = AntonymsTest - Sheet1.csv
    loopType = random
    nReps = 1
    Selected rows = [5,6,7,8,9,10,11,12,13,14,15,16,17,18,19]
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    conditions:
      [{'Choice4': u'ddd', 'Word': u'AAAAAA', 'Choice1': u'aaa', 'Choice2': u'bbb', 'Choice3': u'ccc'},
      {'Choice4': u'ddd', 'Word': u'BBBBBB', 'Choice1': u'aaa', 'Choice2': u'bbb', 'Choice3': u'ccc'},
      {'Choice4': u'hhh', 'Word': u'CCCCC', 'Choice1': u'eee', 'Choice2': u'fff', 'Choice3': u'ggg'},
      {'Choice4': u'lll', 'Word': u'DDD', 'Choice1': u'iii', 'Choice2': u'jjj', 'Choice3': u'kkk'},
      {'Choice4': u'ppp', 'Word': u'EEE', 'Choice1': u'mmm', 'Choice2': u'nnn', 'Choice3': u'ooo'}]
    Routine trial
    Routine ITI
  LoopTerminator trials
  Routine ThankYou
