PsychoPy2experiment version="1.85.1"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1000, 800]
  Full-screen window = False
  Show info dlg = False
  expName = untitled
  Screen = 1
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Routines
  Routine trial
    PolygonComponent polygon
      fillColor = $[0,0,0]
      stopVal [duration (s)] = 1.0
      pos = (0, 200)
      lineWidth = 3
      units = pix
      lineColor = $[-1,-1,-1]
      startVal [time (s)] = 0.0
      size = (500, 150)
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    TextComponent TestWord
      color = black
      text [set every repeat] = $Word
      stopVal [duration (s)] = 1.0
      pos = (0, 200)
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 60
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    TextComponent Resp1
      color = black
      text [set every repeat] = $Choice1
      stopVal [duration (s)] = 1.0
      pos = (0, 40)
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 50
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    TextComponent Resp2
      color = black
      text [set every repeat] = $Choice2
      stopVal [duration (s)] = 1.0
      pos = (0, -20)
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 50
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    TextComponent Resp3
      color = black
      text [set every repeat] = $Choice3
      stopVal [duration (s)] = 1.0
      pos = (0, -80)
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 50
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    TextComponent Resp4
      color = black
      text [set every repeat] = $Choice4
      stopVal [duration (s)] = 1.0
      pos = (0, -140)
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 50
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  Routine Instructions
    TextComponent Instruct
      wrapWidth = 600
      color = black
      stopVal [duration (s)] = 5
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 40
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      text:
        Press the number associated with the word that is most nearly the OPPOSITE in meaning as the word in capital letters.

        Press any key to begin.
  Routine ITI
    TextComponent text_2
      color = black
      text = +
      stopVal [duration (s)] = 1.0
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 60
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Flow
  Routine Instructions
  Routine ITI
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = AntonymsTest - Sheet1.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'Choice4': u'ddd', 'Word': u'AAAAAA', 'Choice1': u'aaa', 'Choice2': u'bbb', 'Choice3': u'ccc'},
      {'Choice4': u'ddd', 'Word': u'BBBBBB', 'Choice1': u'aaa', 'Choice2': u'bbb', 'Choice3': u'ccc'},
      {'Choice4': u'hhh', 'Word': u'CCCCC', 'Choice1': u'eee', 'Choice2': u'fff', 'Choice3': u'ggg'},
      {'Choice4': u'lll', 'Word': u'DDD', 'Choice1': u'iii', 'Choice2': u'jjj', 'Choice3': u'kkk'},
      {'Choice4': u'ppp', 'Word': u'EEE', 'Choice1': u'mmm', 'Choice2': u'nnn', 'Choice3': u'ooo'}]
    Routine trial
    Routine ITI
  LoopTerminator trials
