PsychoPy2experiment version="1.85.1"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u'', u'Font Size': u'unused'}
  Units = pix
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  expName = attemptDMS
  Screen = 1
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Routines
  Routine Countdown
    TextComponent text3
      text = 3
      stopVal [duration (s)] = 1.0
      units = pix
      startVal [time (s)] = 0.0
      font = Times New Roman
      letterHeight = 40
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    TextComponent text2
      text = 2
      stopVal [duration (s)] = 1.0
      units = pix
      startVal [time (s)] = 1.0
      font = Times New Roman
      letterHeight = 40
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    TextComponent text1
      text = 1
      stopVal [duration (s)] = 1.0
      units = pix
      startVal [time (s)] = 2.0
      font = Times New Roman
      letterHeight = 40
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  Routine trial
    TextComponent textITI
      text = +
      stopVal [duration (s)] = 0.5
      units = pix
      startVal [time (s)] = 0.0
      font = Times New Roman
      letterHeight = 40
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    TextComponent textTL
      text [set every repeat] = $TL
      stopVal [duration (s)] = 2.0
      pos = (-50, 50)
      units = pix
      startVal [time (s)] = 0.5
      font = Times New Roman
      letterHeight = 40
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    TextComponent textTM
      text [set every repeat] = $TM
      stopVal [duration (s)] = 2.0
      pos = (0, 50)
      units = pix
      startVal [time (s)] = 0.5
      font = Times New Roman
      letterHeight = 40
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    TextComponent textTR
      text [set every repeat] = $TR
      stopVal [duration (s)] = 2.0
      pos = (50, 50)
      units = pix
      startVal [time (s)] = 0.5
      font = Times New Roman
      letterHeight = 40
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    TextComponent textCL
      text [set every repeat] = $CL
      stopVal [duration (s)] = 2.0
      pos = (-50, 0)
      units = pix
      startVal [time (s)] = 0.5
      font = Times New Roman
      letterHeight = 40
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    TextComponent textCM
      text [set every repeat] = $CM
      stopVal [duration (s)] = 2.0
      units = pix
      startVal [time (s)] = 0.5
      font = Times New Roman
      letterHeight = 40
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    TextComponent textCR
      text [set every repeat] = $CR
      stopVal [duration (s)] = 2.0
      pos = (50, 0)
      units = pix
      startVal [time (s)] = 0.5
      font = Times New Roman
      letterHeight = 40
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    TextComponent textBL
      text [set every repeat] = $BL
      stopVal [duration (s)] = 2.0
      pos = (-50, -50)
      units = pix
      startVal [time (s)] = 0.5
      font = Times New Roman
      letterHeight = 40
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    TextComponent textBM
      text [set every repeat] = $BM
      stopVal [duration (s)] = 2.0
      pos = (0, -50)
      units = pix
      startVal [time (s)] = 0.5
      font = Times New Roman
      letterHeight = 40
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    TextComponent textBR
      text [set every repeat] = $BR
      stopVal [duration (s)] = 2.0
      pos = (50, -50)
      units = pix
      startVal [time (s)] = 0.5
      font = Times New Roman
      letterHeight = 40
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    TextComponent textDelay
      color = green
      text = +
      stopVal [duration (s)] = 2.5
      units = pix
      startVal [time (s)] = 2.5
      font = Times New Roman
      letterHeight = 40
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    TextComponent textProbe
      text [set every repeat] = $probe
      stopVal [duration (s)] = 2.0
      units = pix
      startVal [time (s)] = 5.0
      font = Times New Roman
      letterHeight = 40
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    KeyboardComponent resp
      correctAns = $corr
      storeCorrect = True
      stopVal [duration (s)] = 2.0
      forceEndRoutine = False
      discard previous = False
      allowedKeys [set every repeat] = 'left','down'
      startVal [time (s)] = 5.0
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  Routine EndDelay
    TextComponent textEndDelay
      text = +
      stopVal [duration (s)] = 2.0
      units = pix
      startVal [time (s)] = 0.0
      font = Times New Roman
      letterHeight = 40
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  Routine Thankyou
    TextComponent textThankyou
      color = yellow
      units = pix
      startVal [time (s)] = 0.0
      font = Times New Roman
      letterHeight = 40
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      text:
        Thank you for participating!

        When you are ready to proceed press any key.
    KeyboardComponent OK2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Instructions
    TextComponent textInstr1
      color = yellow
      units = pix
      startVal [time (s)] = 0.0
      font = Times New Roman
      letterHeight = 40
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      text:
        Ready to start the main experiment?

        Remember:
        Press [LEFT] if the letter WAS in the set.
        Press [DOWN] if the letter was NOT in the set.

        Try to respond as quickly and as accurately as possible.

        When you are ready to proceed press any key.
    KeyboardComponent OK1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Interblock
    TextComponent textInterblock
      color = red
      text = +
      stopVal [duration (s)] = 9.0
      units = pix
      startVal [time (s)] = 0.0
      font = Times New Roman
      letterHeight = 40
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    TextComponent text3A
      text = 3
      stopVal [duration (s)] = 1.0
      units = pix
      startVal [time (s)] = 9.0
      font = Times New Roman
      letterHeight = 40
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    TextComponent text2A
      text = 2
      stopVal [duration (s)] = 1.0
      units = pix
      startVal [time (s)] = 10.0
      font = Times New Roman
      letterHeight = 40
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    TextComponent text1A
      text = 1
      stopVal [duration (s)] = 1.0
      units = pix
      startVal [time (s)] = 11.0
      font = Times New Roman
      letterHeight = 40
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Flow
  Routine Instructions
  Routine Countdown
  LoopInitiator trials1 loopType="TrialHandler"
    conditionsFile = DMSFile.xlsx
    loopType = sequential
    nReps = 1
    Selected rows = $[0,1,2,3,4,5]
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    Routine trial
  LoopTerminator trials1
  Routine Interblock
  LoopInitiator trials2 loopType="TrialHandler"
    conditionsFile = DMSFile.xlsx
    loopType = sequential
    nReps = 1
    Selected rows = $[6,7,8,9,10,11]
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    Routine trial
  LoopTerminator trials2
  Routine Interblock
  LoopInitiator trials3 loopType="TrialHandler"
    conditionsFile = DMSFile.xlsx
    loopType = sequential
    nReps = 1
    Selected rows = $[12,13,14,15,16,17]
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    Routine trial
  LoopTerminator trials3
  Routine Interblock
  LoopInitiator trials4 loopType="TrialHandler"
    conditionsFile = DMSFile.xlsx
    loopType = sequential
    nReps = 1
    Selected rows = $[18,19,20,21,22,23]
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    Routine trial
  LoopTerminator trials4
  Routine Interblock
  LoopInitiator trials5 loopType="TrialHandler"
    conditionsFile = DMSFile.xlsx
    loopType = sequential
    nReps = 1
    Selected rows = $[24,25,26,27,28,29]
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    Routine trial
  LoopTerminator trials5
  Routine Interblock
  LoopInitiator trials6 loopType="TrialHandler"
    conditionsFile = DMSFile.xlsx
    loopType = sequential
    nReps = 1
    Selected rows = $[30,31,32,33,34,35]
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    Routine trial
  LoopTerminator trials6
  Routine Interblock
  LoopInitiator trials7 loopType="TrialHandler"
    conditionsFile = DMSFile.xlsx
    loopType = sequential
    nReps = 1
    Selected rows = $[36,37,38,39,40,41]
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    Routine trial
  LoopTerminator trials7
  Routine EndDelay
  Routine Thankyou
