PsychoPy2experiment version="1.85.1"
Settings
  Monitor = testMonitor
  color = $[0, 0, 0]
  Experiment info = {u'session': u'2', u'participant': u''}
  Units = pix
  Save excel file = True
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  Save log file = False
  Data filename = u'data' + os.sep + '%s_%s' % (expInfo['participant'], expInfo['date'])
  expName = DMSDemo1
  logging level = warning
  Screen = 1
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Routines
  Routine practInstruct2
    TextComponent textInstr2
      color = yellow
      units = pix
      startVal [time (s)] = 0.0
      font = Times New Roman
      letterHeight = 40
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      text:
        Respond with the keys;
        [LEFT] if the letter WAS in the set
        [DOWN] if the letter was NOT in the set

        There will be a number of practice trials in which you will be given feedback.  Try to respond as quickly and as accurately as possible.

        When you are ready to proceed press any key.
    KeyboardComponent OK2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine feedback
    CodeComponent message
      Begin Experiment:
        #msg variable just needs some value at start
        msg=''
      Begin Routine:
        if resp.corr:#stored on last run routine
          msg="Correct! RT=%.3f" %(resp.rt)
        else:
          msg="Oops! That was wrong"
    TextComponent textFeedback
      text [set every repeat] = $msg
      stopVal [duration (s)] = 1.0
      units = pix
      startVal [time (s)] = 0.0
      font = Times New Roman
      letterHeight = 40
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  Routine practInstruct1
    TextComponent textInstr1
      color = yellow
      units = pix
      startVal [time (s)] = 0.0
      font = Times New Roman
      letterHeight = 40
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      text:
        In this experiment you will be presented with a set of letters. A set may contain anywhere from 1 to 9 letters for you to memorize.

        Following a short delay you will then be presented with a single letter and you will have to decide whether this new letter was a member of the set.

        When you are ready to proceed press any key.
    KeyboardComponent OK1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine countdown
    TextComponent text3
      text = 3
      stopVal [duration (s)] = 1.0
      units = pix
      startVal [time (s)] = 0.0
      font = Times New Roman
      letterHeight = 40
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    TextComponent text2
      text = 2
      stopVal [duration (s)] = 1.0
      units = pix
      startVal [time (s)] = 1.0
      font = Times New Roman
      letterHeight = 40
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    TextComponent text1
      text = 1
      stopVal [duration (s)] = 1.0
      units = pix
      startVal [time (s)] = 2.0
      font = Times New Roman
      letterHeight = 40
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  Routine trial
    TextComponent textITI
      text = +
      stopVal [duration (s)] = 0.5
      units = pix
      startVal [time (s)] = 0.0
      font = Times New Roman
      letterHeight = 40
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    TextComponent textTL
      text [set every repeat] = $TL
      stopVal [duration (s)] = 2.0
      pos = [-50, 50]
      units = pix
      startVal [time (s)] = 0.5
      font = Times New Roman
      letterHeight = 40
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    TextComponent textTM
      text [set every repeat] = $TM
      stopVal [duration (s)] = 2.0
      pos = (0, 50)
      units = pix
      startVal [time (s)] = 0.5
      font = Times New Roman
      letterHeight = 40
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    TextComponent textTR
      text [set every repeat] = $TR
      stopVal [duration (s)] = 2.0
      pos = (50, 50)
      units = pix
      startVal [time (s)] = 0.5
      font = Times New Roman
      letterHeight = 40
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    TextComponent textCL
      text [set every repeat] = $CL
      stopVal [duration (s)] = 2.0
      pos = (-50, 0)
      units = pix
      startVal [time (s)] = 0.5
      font = Times New Roman
      letterHeight = 40
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    TextComponent textCM
      text [set every repeat] = $CM
      stopVal [duration (s)] = 2.0
      units = pix
      startVal [time (s)] = 0.5
      font = Times New Roman
      letterHeight = 40
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    TextComponent textCR
      text [set every repeat] = $CR
      stopVal [duration (s)] = 2.0
      pos = (50, 0)
      units = pix
      startVal [time (s)] = 0.5
      font = Times New Roman
      letterHeight = 40
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    TextComponent textBL
      text [set every repeat] = $BL
      stopVal [duration (s)] = 2.0
      pos = (-50, -50)
      units = pix
      startVal [time (s)] = 0.5
      font = Times New Roman
      letterHeight = 40
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    TextComponent textBM
      text [set every repeat] = $BM
      stopVal [duration (s)] = 2.0
      pos = (0, -50)
      units = pix
      startVal [time (s)] = 0.5
      font = Times New Roman
      letterHeight = 40
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    TextComponent textBR
      text [set every repeat] = $BR
      stopVal [duration (s)] = 2.0
      pos = (50, -50)
      units = pix
      startVal [time (s)] = 0.5
      font = Times New Roman
      letterHeight = 40
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    TextComponent textDelay
      color = green
      text = +
      stopVal [duration (s)] = 2.5
      units = pix
      startVal [time (s)] = 2.5
      font = Times New Roman
      letterHeight = 40
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    TextComponent textProbe
      text [set every repeat] = $probe
      units = pix
      startVal [time (s)] = 5.0
      font = Times New Roman
      letterHeight = 40
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    KeyboardComponent resp
      correctAns = $corr
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'left', 'down'
      startVal [time (s)] = 5.0
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  Routine mainInstruct
    TextComponent textInstr3
      color = yellow
      units = pix
      startVal [time (s)] = 0.0
      font = Times New Roman
      letterHeight = 40
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      text:
        OK, ready to start the main experiment?

        Remember:
        Press [LEFT] for IN the set
        Press [DOWN] for NOT in the set

        Try to respond as quickly and as accurately as possible.

        When you are ready to proceed press any key.
    KeyboardComponent OK3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine practInstruct1
  Routine practInstruct2
  Routine countdown
  LoopInitiator pracTrials loopType="TrialHandler"
    conditionsFile = DMSFileDemo.xlsx
    loopType = sequential
    nReps = 1
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    Routine trial
    Routine feedback
  LoopTerminator pracTrials
  Routine mainInstruct
