PsychoPy2experiment version="1.90.3"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  expName = untitled
  Screen = 1
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Routines
  Routine trial
    TextComponent text
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Any text
Flow
  LoopInitiator trials loopType="StairHandler"
    min value = 0
    loopType = staircase
    nReps = 50
    start value = 0.5
    N up = 1
    max value = 1
    N down = 3
    step type = log
    step sizes = [0.8,0.8,0.4,0.4,0.2]
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    Routine trial
  LoopTerminator trials
