PsychoPy2experiment version="1.85.1"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [800, 600]
  Full-screen window = False
  Save log file = False
  Save wide csv file = False
  Show info dlg = False
  expName = ForwardDigitSpan
  Screen = 1
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Routines
  Routine trial
    SoundComponent sound_1
      sound = NumberSounds/1.wav
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      correctAns = '1'
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = '1','0'
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator Stairs loopType="StairHandler"
    min value = 3
    N reversals = 0
    loopType = staircase
    nReps = 14
    start value = 3
    N up = 2
    max value = 20
    N down = 1
    step type = lin
    step sizes = -1
    isTrials = False
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    Routine trial
  LoopTerminator Stairs
