PsychoPy2experiment version="1.85.1"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [800, 600]
  Full-screen window = False
  Show info dlg = False
  expName = TestStairs
  Screen = 1
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Routines
  Routine trial
    TextComponent text
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Any text

        including line breaks
    KeyboardComponent key_resp_2
      correctAns = 'left'
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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    MicrophoneComponent mic_1
      stereo = True
      startVal [time (s)] = 0.0
Flow
  LoopInitiator trials loopType="StairHandler"
    min value = 0
    N reversals = 0
    loopType = staircase
    nReps = 14
    start value = 3
    N up = 2
    max value = 20
    N down = 1
    step type = lin
    step sizes = -1
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    Routine trial
  LoopTerminator trials
