PsychoPy2experiment version="1.85.1"
Settings
  Monitor = MacBookPro
  Experiment info = {u'Participant ID': u'', u'Font Size': u'empty', u'Visit ID': u'0001'}
  Units = pix
  Window size (pixels) = [1440, 900]
  Full-screen window = False
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  expName = FRT
  Screen = 1
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Routines
  Routine EndDelay
    TextComponent textEndDelay
      text = +
      stopVal [duration (s)] = 2.0
      units = pix
      startVal [time (s)] = 0.0
      font = Times New Roman
      letterHeight = 40
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  Routine InterBlockDelay
    TextComponent textInterblock
      color [set every frame] = red
      text = +
      stopVal [duration (s)] = 9.0
      units = pix
      startVal [time (s)] = 0.0
      font = Times New Roman
      letterHeight = 40
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    TextComponent text3A
      text = 3
      stopVal [duration (s)] = 1.0
      units = pix
      startVal [time (s)] = 9.0
      font = Times New Roman
      letterHeight = 40
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    TextComponent text2A
      text = 2
      stopVal [duration (s)] = 1.0
      units = pix
      startVal [time (s)] = 10.0
      font = Times New Roman
      letterHeight = 40
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    TextComponent text1A
      text = 1
      stopVal [duration (s)] = 1.0
      units = pix
      startVal [time (s)] = 11.0
      font = Times New Roman
      letterHeight = 40
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  Routine ThankYou
    TextComponent textThankYou
      color = yellow
      units = pix
      startVal [time (s)] = 0.0
      font = Times New Roman
      letterHeight = 40
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      text:
        Thank you for participating!

        When you are ready to proceed press any key.
    KeyboardComponent OK2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Countdown
    TextComponent text3
      text = 3
      stopVal [duration (s)] = 1.0
      units = pix
      startVal [time (s)] = 0.0
      font = Times New Roman
      letterHeight = 40
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    TextComponent text2
      text = 2
      stopVal [duration (s)] = 1.0
      units = pix
      startVal [time (s)] = 1.0
      font = Times New Roman
      letterHeight = 40
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    TextComponent text1
      text = 1
      stopVal [duration (s)] = 1.0
      units = pix
      startVal [time (s)] = 2.0
      font = Times New Roman
      letterHeight = 40
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  Routine trial
    TextComponent textITI
      text = +
      stopVal [duration (s)] = 0.5
      units = pix
      startVal [time (s)] = 0.0
      font = Times New Roman
      letterHeight = 40
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    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    ImageComponent imageLEFT
      opacity [set every repeat] = $imageLop
      stopVal [duration (s)] = 3.0
      pos = [-160,0]
      units = pix
      startVal [time (s)] = 0.5
      image [set every repeat] = $imageL
      size = [300, 350]
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    ImageComponent imageLEFTnoise
      opacity [set every repeat] = $imageLnop
      stopVal [duration (s)] = 3.0
      pos = (-160, 0)
      units = pix
      startVal [time (s)] = 0.5
      image [set every repeat] = $imageLn
      size = (300, 350)
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    ImageComponent imageRIGHT
      opacity [set every repeat] = $imageRop
      stopVal [duration (s)] = 3.0
      pos = [160, 0]
      units = pix
      startVal [time (s)] = 0.5
      image [set every repeat] = $imageR
      size = [300, 350]
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    ImageComponent imageRIGHTnoise
      opacity [set every repeat] = $imageRnop
      stopVal [duration (s)] = 3.0
      pos = (160, 0)
      units = pix
      startVal [time (s)] = 0.5
      image [set every repeat] = $imageRn
      size = (300, 350)
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    KeyboardComponent resp
      correctAns = $corr
      storeCorrect = True
      stopVal [duration (s)] = 3.0
      forceEndRoutine = False
      discard previous = False
      allowedKeys = 'left','down'
      startVal [time (s)] = 0.5
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  Routine Instructions
    TextComponent textInstr1
      color = yellow
      units = pix
      startVal [time (s)] = 0.0
      font = Times New Roman
      letterHeight = 40
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      text:
        Ready to start the main experiment?

        Remember:
        Press [LEFT] for the SAME person
        Press [DOWN] for DIFFERENT people

        Try to respond as quickly and as accurately as possible.

        When you are ready to proceed press any key.
    KeyboardComponent OK1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine Instructions
  Routine Countdown
  LoopInitiator trials1 loopType="TrialHandler"
    conditionsFile = FRTFile
    loopType = sequential
    nReps = 1
    Selected rows = $[0,1,2,3,4,5,6,7,8,9,10,11]
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    Routine trial
  LoopTerminator trials1
  Routine InterBlockDelay
  LoopInitiator trials2 loopType="TrialHandler"
    conditionsFile = FRTFile
    loopType = sequential
    nReps = 1
    Selected rows = $[12,13,14,15,16,17,18,19,20,21,22,23]
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    Routine trial
  LoopTerminator trials2
  Routine InterBlockDelay
  LoopInitiator trials3 loopType="TrialHandler"
    conditionsFile = FRTFile
    loopType = sequential
    nReps = 1
    Selected rows = $[24,25,26,27,28,29,30,31,32,33,34,35]
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    Routine trial
  LoopTerminator trials3
  Routine InterBlockDelay
  LoopInitiator trials4 loopType="TrialHandler"
    conditionsFile = FRTFile
    loopType = sequential
    nReps = 1
    Selected rows = $[36,37,38,39,40,41,42,43,44,45,46,47]
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    Routine trial
  LoopTerminator trials4
  Routine InterBlockDelay
  LoopInitiator trials5 loopType="TrialHandler"
    conditionsFile = FRTFile
    loopType = sequential
    nReps = 1
    Selected rows = $[48,49,50,51,52,53,54,55,56,57,58,59]
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    Routine trial
  LoopTerminator trials5
  Routine InterBlockDelay
  LoopInitiator trials6 loopType="TrialHandler"
    conditionsFile = FRTFile
    loopType = sequential
    nReps = 1
    Selected rows = $[60,61,62,63,64,65,66,67,68,69,70,71]
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    Routine trial
  LoopTerminator trials6
  Routine InterBlockDelay
  LoopInitiator trials7 loopType="TrialHandler"
    conditionsFile = FRTFile
    loopType = sequential
    nReps = 1
    Selected rows = $[72,73,74,75,76,77,78,79,80,81,82,83]
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    Routine trial
  LoopTerminator trials7
  Routine EndDelay
  Routine ThankYou
