PsychoPy2experiment version="1.84.2"
Settings
  Monitor = testMonitor
  color = $[0, 0, 0]
  Experiment info = {u'session': u'2', u'participant': u''}
  Units = pix
  Save excel file = True
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  Save log file = False
  Data filename = u'data' + os.sep + '%s_%s' % (expInfo['participant'], expInfo['date'])
  expName = FRTDemo1
  logging level = warning
  Screen = 1
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Routines
  Routine practInstruct4
    TextComponent textInstr6
      color = yellow
      units = pix
      startVal [time (s)] = 0.0
      font = Times New Roman
      letterHeight = 40
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      text:
        Respond with the keys;
        [LEFT] if the two faces are from the SAME PERSON
        [DOWN] if the two faces are from DIFFERENT PEOPLE

        There will be a number of practice trials in which you will be given feedback.  Try to respond as quickly and as accurately as possible.

        When you are ready to proceed press any key.
    KeyboardComponent OK4
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine practInstruct2
    TextComponent textInstr2
      color = yellow
      pos = (-256, 192)
      units = pix
      startVal [time (s)] = 0.0
      font = Times New Roman
      letterHeight = 40
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      text:
        For example;
        These two faces are from the SAME PERSON
    TextComponent textInstr3
      color = yellow
      text = These next two faces are from DIFFERENT PEOPLE
      pos = (-256, -140)
      units = pix
      startVal [time (s)] = 0.0
      font = Times New Roman
      letterHeight = 40
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    TextComponent textInstr4
      color = yellow
      text = When you are ready to proceed press any key.
      pos = (-256, -350)
      units = pix
      startVal [time (s)] = 0.0
      font = Times New Roman
      letterHeight = 40
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    ImageComponent image1
      pos = (128, 192)
      units = pix
      startVal [time (s)] = 0.0
      image = FRTFaces/cropAF31NEHR.JPG
      size = (230, 268)
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    ImageComponent image2
      pos = (384, 192)
      units = pix
      startVal [time (s)] = 0.0
      image = FRTFaces/cropAF31NEHL.JPG
      size = (230, 268)
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    ImageComponent image3
      pos = (128, -140)
      units = pix
      startVal [time (s)] = 0.0
      image = FRTFaces/cropAF31NEHR.JPG
      size = (230, 268)
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    ImageComponent image4
      pos = (384, -140)
      units = pix
      startVal [time (s)] = 0.0
      image = FRTFaces/cropAF35NEHL.JPG
      size = (230, 268)
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    KeyboardComponent OK2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine practInstruct3
    TextComponent textInstr5
      color = yellow
      pos = (-256, 0)
      units = pix
      startVal [time (s)] = 0.0
      font = Times New Roman
      letterHeight = 40
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      text:
        Faces will be degraded to varying levels.

        Do not worry if you cannot distinguish certain faces, just try your best!

        When you are ready to proceed press any key.
    ImageComponent image1A
      opacity = 0.9
      pos = (128, 192)
      units = pix
      startVal [time (s)] = 0.0
      image = FRTFaces/cropAF35NEHL.JPG
      size = (230, 268)
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    ImageComponent image1An
      opacity = 0.1
      pos = (128, 192)
      units = pix
      startVal [time (s)] = 0.0
      image = FRTFaces/noisecropAF35NEHL.JPG
      size = (230, 268)
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    ImageComponent image2A
      opacity = 0.7
      pos = (384, 192)
      units = pix
      startVal [time (s)] = 0.0
      image = FRTFaces/cropAF35NEHL.JPG
      size = (230, 268)
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    ImageComponent image2An
      opacity = 0.3
      pos = (384, 192)
      units = pix
      startVal [time (s)] = 0.0
      image = FRTFaces/noisecropAF35NEHL.JPG
      size = (230, 268)
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    ImageComponent image3A
      opacity = 0.6
      pos = (128, -140)
      units = pix
      startVal [time (s)] = 0.0
      image = FRTFaces/cropAF35NEHL.JPG
      size = (230, 268)
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    ImageComponent image3An
      opacity = 0.4
      pos = (128, -140)
      units = pix
      startVal [time (s)] = 0.0
      image = FRTFaces/noisecropAF35NEHL.JPG
      size = (230, 268)
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    ImageComponent image4A
      opacity = 0.5
      pos = (384, -140)
      units = pix
      startVal [time (s)] = 0.0
      image = FRTFaces/cropAF35NEHL.JPG
      size = (230, 268)
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    ImageComponent image4An
      opacity = 0.5
      pos = (384, -140)
      units = pix
      startVal [time (s)] = 0.0
      image = FRTFaces/noisecropAF35NEHL.JPG
      size = (230, 268)
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    KeyboardComponent OK3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine practInstruct1
    TextComponent textInstr1
      color = yellow
      units = pix
      startVal [time (s)] = 0.0
      font = Times New Roman
      letterHeight = 40
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      text:
        In this experiment you will be presented with a pair of faces.

        You will have to decide whether these faces are from the same person or different people.

        When you are ready to proceed press any key.
    KeyboardComponent OK1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine mainInstruct2
    TextComponent textInstr8
      color = yellow
      pos = (-256, -300)
      units = pix
      startVal [time (s)] = 0
      font = Times New Roman
      letterHeight = 40
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      text:
        Remember;
        Faces will be degraded to varying levels.
    ImageComponent image1B
      opacity = 0.9
      stopVal [duration (s)] = 0.5
      units = pix
      startVal [time (s)] = 0.0
      image = FRTFaces/cropAF31NEHL.JPG
      size = (300, 350)
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    ImageComponent image1Bn
      opacity = 0.1
      stopVal [duration (s)] = 0.5
      units = pix
      startVal [time (s)] = 0.0
      image = FRTFaces/noisecropAF31NEHL.JPG
      size = (300, 350)
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    ImageComponent image2B
      opacity = 0.8
      stopVal [duration (s)] = 0.5
      units = pix
      startVal [time (s)] = 0.5
      image = FRTFaces/cropAF31NEHL.JPG
      size = (300, 350)
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    ImageComponent image2Bn
      opacity = 0.2
      stopVal [duration (s)] = 0.5
      units = pix
      startVal [time (s)] = 0.5
      image = FRTFaces/noisecropAF31NEHL.JPG
      size = (300, 350)
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    ImageComponent image3B
      opacity = 0.7
      stopVal [duration (s)] = 0.5
      units = pix
      startVal [time (s)] = 1.0
      image = FRTFaces/cropAF31NEHL.JPG
      size = (300, 350)
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    ImageComponent image3Bn
      opacity = 0.3
      stopVal [duration (s)] = 0.5
      units = pix
      startVal [time (s)] = 1.0
      image = FRTFaces/noisecropAF31NEHL.JPG
      size = (300, 350)
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    ImageComponent image4B
      opacity = 0.6
      stopVal [duration (s)] = 0.5
      units = pix
      startVal [time (s)] = 1.5
      image = FRTFaces/cropAF31NEHL.JPG
      size = (300, 350)
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    ImageComponent image4Bn
      opacity = 0.4
      stopVal [duration (s)] = 0.5
      units = pix
      startVal [time (s)] = 1.5
      image = FRTFaces/noisecropAF31NEHL.JPG
      size = (300, 350)
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    ImageComponent image5B
      opacity = 0.5
      stopVal [duration (s)] = 0.5
      units = pix
      startVal [time (s)] = 2.0
      image = FRTFaces/cropAF31NEHL.JPG
      size = (300, 350)
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    ImageComponent image5Bn
      opacity = 0.5
      stopVal [duration (s)] = 0.5
      units = pix
      startVal [time (s)] = 2.0
      image = FRTFaces/noisecropAF31NEHL.JPG
      size = (300, 350)
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    ImageComponent image6B
      opacity = 0.4
      units = pix
      startVal [time (s)] = 2.5
      image = FRTFaces/cropAF31NEHL.JPG
      size = (300, 350)
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    ImageComponent image6Bn
      opacity = 0.6
      units = pix
      startVal [time (s)] = 2.5
      image = FRTFaces/noisecropAF31NEHL.JPG
      size = (300, 350)
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    TextComponent textInstr9
      color = yellow
      text = When you are ready to proceed press any key.
      pos = (256, -300)
      units = pix
      startVal [time (s)] = 2.5
      font = Times New Roman
      letterHeight = 40
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    KeyboardComponent OK6
      forceEndRoutine = True
      startVal [time (s)] = 2.5
      store = nothing
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  Routine mainInstruct1
    TextComponent textInstr7
      color = yellow
      units = pix
      startVal [time (s)] = 0.0
      font = Times New Roman
      letterHeight = 40
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      text:
        OK, ready to start the main experiment?

        Remember:
        Press [LEFT] for the SAME person
        Press [DOWN] for DIFFERENT people

        Try to respond as quickly and as accurately as possible.

        When you are ready to proceed press any key.
    KeyboardComponent OK5
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Countdown
    TextComponent text3
      text = 3
      stopVal [duration (s)] = 1.0
      units = pix
      startVal [time (s)] = 0.0
      font = Times New Roman
      letterHeight = 40
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    TextComponent text2
      text = 2
      stopVal [duration (s)] = 1.0
      units = pix
      startVal [time (s)] = 1.0
      font = Times New Roman
      letterHeight = 40
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    TextComponent text1
      text = 1
      stopVal [duration (s)] = 1.0
      units = pix
      startVal [time (s)] = 2.0
      font = Times New Roman
      letterHeight = 40
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  Routine trial
    TextComponent textITI
      text = +
      stopVal [duration (s)] = 0.5
      units = pix
      startVal [time (s)] = 0.0
      font = Times New Roman
      letterHeight = 40
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    ImageComponent imageLEFT
      opacity [set every repeat] = $imageLop
      pos = (-175, 0)
      units = pix
      startVal [time (s)] = 0.5
      image [set every repeat] = $imageL
      size = (300, 350)
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    ImageComponent imageRIGHT
      opacity [set every repeat] = $imageRop
      pos = (175, 0)
      units = pix
      startVal [time (s)] = 0.5
      image [set every repeat] = $imageR
      size = (300, 350)
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    ImageComponent imageLEFTnoise
      opacity [set every repeat] = $imageLnop
      pos = (-175, 0)
      startVal [time (s)] = 0.5
      image [set every repeat] = $imageLn
      size = (300, 350)
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    ImageComponent imageRIGHTnoise
      opacity [set every repeat] = $imageRnop
      pos = (175, 0)
      units = pix
      startVal [time (s)] = 0.5
      image [set every repeat] = $imageRn
      size = (300, 350)
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    KeyboardComponent resp
      correctAns = $corr
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'left', 'down'
      startVal [time (s)] = 0.5
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  Routine feedback
    CodeComponent message
      Begin Experiment:
        #msg variable just needs some value at start
        msg=''
      Begin Routine:
        if resp.corr:#stored on last run routine
          msg="Correct! RT=%.3f" %(resp.rt)
        else:
          msg="Oops! That was wrong"
    TextComponent textFeedback
      text [set every repeat] = $msg
      stopVal [duration (s)] = 1.0
      units = pix
      startVal [time (s)] = 0.0
      font = Times New Roman
      letterHeight = 40
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Flow
  Routine practInstruct1
  Routine practInstruct2
  Routine practInstruct3
  Routine practInstruct4
  Routine Countdown
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = FRTFileDemo.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{u'imageLnop': 0L, u'imageL': u'FRTFaces/cropAM07NEHR.JPG', u'imageLn': u'FRTFaces/noisecropAM07NEHR.JPG', u'imageRop': 1L, u'imageRn': u'FRTFaces/noisecropAM07NEHL.JPG', u'corr': u'left', u'imageR': u'FRTFaces/cropAM07NEHL.JPG', u'imageRnop': 0L, u'imageLop': 1L},
      {u'imageLnop': 0.1, u'imageL': u'FRTFaces/cropAF21NEHR.JPG', u'imageLn': u'FRTFaces/noisecropAF21NEHR.JPG', u'imageRop': 0.9, u'imageRn': u'FRTFaces/noisecropAF22NEHL.JPG', u'corr': u'down', u'imageR': u'FRTFaces/cropAF22NEHL.JPG', u'imageRnop': 0.1, u'imageLop': 0.9},
      {u'imageLnop': 0.2, u'imageL': u'FRTFaces/cropAM10NEHR.JPG', u'imageLn': u'FRTFaces/noisecropAM10NEHR.JPG', u'imageRop': 0.8, u'imageRn': u'FRTFaces/noisecropAM11NEHL.JPG', u'corr': u'down', u'imageR': u'FRTFaces/cropAM11NEHL.JPG', u'imageRnop': 0.2, u'imageLop': 0.8},
      {u'imageLnop': 0.3, u'imageL': u'FRTFaces/cropAF29NEHR.JPG', u'imageLn': u'FRTFaces/noisecropAF29NEHR.JPG', u'imageRop': 0.7, u'imageRn': u'FRTFaces/noisecropAF29NEHL.JPG', u'corr': u'left', u'imageR': u'FRTFaces/cropAF29NEHL.JPG', u'imageRnop': 0.3, u'imageLop': 0.7},
      {u'imageLnop': 0.4, u'imageL': u'FRTFaces/cropAF20NEHR.JPG', u'imageLn': u'FRTFaces/noisecropAF20NEHR.JPG', u'imageRop': 0.6, u'imageRn': u'FRTFaces/noisecropAF20NEHL.JPG', u'corr': u'left', u'imageR': u'FRTFaces/cropAF20NEHL.JPG', u'imageRnop': 0.4, u'imageLop': 0.6}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
    Routine trial
    Routine feedback
  LoopTerminator trials
  Routine mainInstruct1
  Routine mainInstruct2
