PsychoPy2experiment version="1.85.1"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = pix
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  Show info dlg = False
  expName = MatricesPractice
  Screen = 1
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Routines
  Routine GetReady
    TextComponent GetReady2
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 40
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      text:
        Get ready to perform the task with no feedback.
        Please try to respond as quickly and accurately as possible.

        Press any key to begin.
    KeyboardComponent GetReadyResp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ThankYou
    TextComponent text_2
      color = black
      text = Thank You
      stopVal [duration (s)] = 3
      startVal [time (s)] = 0.0
      letterHeight = 40
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  Routine trial
    ImageComponent image
      pos = (0, 200)
      startVal [time (s)] = 0.0
      image [set every repeat] = $Stimulus
      size [set every repeat] = (430,380)
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    ImageComponent CFig1
      pos = (-225, -75)
      startVal [time (s)] = 0.0
      image [set every repeat] = $Choice1
      size = (120, 120)
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    ImageComponent CFig2
      pos = (-75, -75)
      startVal [time (s)] = 0.0
      image [set every repeat] = $Choice2
      size = (120, 120)
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    ImageComponent CFig3
      pos = (75, -75)
      startVal [time (s)] = 0.0
      image [set every repeat] = $Choice3
      size = (120, 120)
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    ImageComponent CFig4
      pos = (225, -75)
      startVal [time (s)] = 0.0
      image [set every repeat] = $Choice4
      size = (120, 120)
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    ImageComponent CFig5
      pos = (-225, -225)
      startVal [time (s)] = 0.0
      image [set every frame] = $Choice5
      size = (120,120)
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    ImageComponent CFIg6
      pos = (-75, -225)
      startVal [time (s)] = 0.0
      image [set every repeat] = $Choice6
      size = (120, 120)
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    TextComponent Opt1
      color = black
      text = 1
      pos = (-170, -30)
      startVal [time (s)] = 0.0
      letterHeight = 40
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    TextComponent Opt2
      color = black
      text = 2
      pos = (-20, -30)
      startVal [time (s)] = 0.0
      letterHeight = 40
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    TextComponent Opt3
      color = black
      text = 3
      pos = (130, -30)
      startVal [time (s)] = 0.0
      letterHeight = 40
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    TextComponent Opt4
      color = black
      text = 4
      pos = (280, -30)
      startVal [time (s)] = 0.0
      letterHeight = 40
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    TextComponent Opt5
      color = black
      text = 5
      pos = (-170, -180)
      startVal [time (s)] = 0.0
      letterHeight = 40
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    KeyboardComponent key_resp_2
      correctAns = $Corr
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = '1','2','3','4','5','6','7','8'
      startVal [time (s)] = 0.0
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    ImageComponent CFig7
      pos = (75, -225)
      startVal [time (s)] = 0.0
      image [set every repeat] = $Choice7
      size = (120, 120)
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    ImageComponent CFig8
      pos = (225, -225)
      startVal [time (s)] = 0.0
      image [set every repeat] = $Choice8
      size = (120, 120)
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    TextComponent Opt6
      color = black
      text = 6
      pos = (-20, -180)
      startVal [time (s)] = 0.0
      letterHeight = 40
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    TextComponent Opt7
      color = black
      text = 7
      pos = (130, -180)
      startVal [time (s)] = 0.0
      letterHeight = 40
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    TextComponent Opt8
      color = black
      text = 8
      pos = (280, -180)
      startVal [time (s)] = 0.0
      letterHeight = 40
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  Routine crosshair
    TextComponent text
      color = black
      text = +
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      letterHeight = 40
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  Routine Instructions
    TextComponent Instruct
      wrapWidth = 1000
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 40
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      text:
        Progressive Matrices

        This is a test of observation and clear thinking.
        At the top of the screen you will see a pattern with a bit cut out of it. You will look at the pattern, think what the piece must be that is needed to complete the pattern correctly both along and down. Then find the right piece out of the eight bits shown below.
        Only one of these pieces is perfectly correct.

        Press any key to perform practice trials.
    KeyboardComponent StartPractice
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Feedback2
    TextComponent Prac2Feedback
      wrapWidth = 600
      color = black
      pos = (350, -140)
      startVal [time (s)] = 0.0
      letterHeight = 30
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      text:
        Here the correct answer is 6.

        This is because if you subtract the elements in column 2 from column 1 you get column 3. The same is true if you subtract the elements from row 2 from the elements of row 1, you get row 3.
        Press any key to continue.
    ImageComponent Prac2Fold
      pos = (0, 200)
      startVal [time (s)] = 0.0
      image [set every repeat] = $Stimulus
      size = (430, 380)
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    ImageComponent Prac2Choice
      pos = (-75, -225)
      startVal [time (s)] = 0.0
      image [set every repeat] = $Choice6
      size = (120, 120)
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    KeyboardComponent Prac2End
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Feedback1
    TextComponent Prac1Feedback
      wrapWidth = 660
      color = black
      text [set every repeat] = $Feedback
      pos = (-350, -160)
      startVal [time (s)] = 0.0
      letterHeight = 30
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    ImageComponent Prac1Matrix
      pos = (0, 200)
      startVal [time (s)] = 0.0
      image [set every repeat] = $Stimulus
      size = (430, 380)
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    ImageComponent Prac1Choice
      pos = (75, -75)
      startVal [time (s)] = 0.0
      image [set every repeat] = $CorrectImage
      size = (120,120)
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    KeyboardComponent Prac1End
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent CorrectAnswer
      color = black
      text [set every repeat] = $Corr
      pos = (130, -30)
      startVal [time (s)] = 0.0
      letterHeight = 40
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = MatricesPractice.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Choice8': u'../../MatricesImages/altBpracticematrix1choice8.bmp', 'Feedback': u'Every row and every column has a circle, diamond and a square in it. In addition, each row and column has one cell with one, two and three concentric shapes. Therefore, the missing cell needs to have three concentric shapes and be a diamond.', 'Stimulus': u'../../MatricesImages/altBpracticematrix1.bmp', 'Choice5': u'../../MatricesImages/altBpracticematrix1choice5.bmp', 'Choice6': u'../../MatricesImages/altBpracticematrix1choice6.bmp', 'Choice7': u'../../MatricesImages/altBpracticematrix1choice7.bmp', 'Choice1': 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,
      {'Choice8': u'../../MatricesImages/altBpracticematrix2choice8.bmp', 'Feedback': u'The elements of row 2 are subtracted from the elements of row 1 to produce row 3. The same rule is applied to the columns, where the elements in column 2 are subtracted from the elements in column 1 to produce column 3.', 'Stimulus': u'../../MatricesImages/altBpracticematrix2.bmp', 'Choice5': u'../../MatricesImages/altBpracticematrix2choice5.bmp', 'Choice6': u'../../MatricesImages/altBpracticematrix2choice6.bmp', 'Choice7': u'../../MatricesImages/altBpracticematrix2choice7.bmp', 'Choice1': u'../../MatricesImages/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,
      {'Choice8': u'../../MatricesImages/altAMatrix1Choice8.bmp', 'Feedback': u'The cross pieces are moving down towards the center of the object. The number of objects also increases going down the rows. ', 'Stimulus': u'../../MatricesImages/altAMatrix1.bmp', 'Choice5': u'../../MatricesImages/altAMatrix1Choice5.bmp', 'Choice6': u'../../MatricesImages/altAMatrix1Choice6.bmp', 'Choice7': u'../../MatricesImages/altAMatrix1Choice7.bmp', 'Choice1': u'../../MatricesImages/altAMatrix1Choice1.bmp', 'Choice2': u'../../MatricesImages/altAMatrix1Choice2.bmp', 'Choice3': u'../../MatricesImages/altAMatrix1Choic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,
      {'Choice8': u'../../MatricesImages/AltAMatrix10Choice8.bmp', 'Feedback': u'The elements of row 1 are added to row 2 to produce row 3. The same rule is applied to the columns, where the elements in column 1 are added to the elements in column 1 to produce column 2. In addition, the dots go to the corners of the outside square and the strips go inside the inside square, but remain outside the central circle. Therefore, two ruls are used.', 'Stimulus': u'../../MatricesImages/AltAMatrix10.bmp', 'Choice5': u'../../MatricesImages/AltAMatrix10Choice5.bmp', 'Choice6': u'../../MatricesImages/AltAMatrix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
    Routine trial
    Routine Feedback1
    Routine crosshair
  LoopTerminator trials
  Routine ThankYou
