PsychoPy2experiment version="1.90.3"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = pix
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  Save log file = False
  Save wide csv file = False
  Show info dlg = False
  expName = NBackInstruct
  Screen = 1
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Routines
  Routine Load1
    ImageComponent image_2
      startVal [time (s)] = 0.0
      image = OneBackInstructions.png
      size = (959, 746)
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Load0
    ImageComponent image
      startVal [time (s)] = 0.0
      image = ZeroBackInstructions.png
      size = (959, 746)
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Load2
    ImageComponent image_3
      startVal [time (s)] = 0.0
      image = TwoBackInstructions.png
      size = (959, 746)
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine Load0
  Routine Load1
  Routine Load2
