PsychoPy2experiment version="1.85.1"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = pix
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  Show info dlg = False
  expName = PaperFolding
  Screen = 1
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Routines
  Routine GetReady
    TextComponent GetReady2
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 40
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      text:
        Get ready to perform the task with no feedback.
        Please try to respond as quickly and accurately as possible.

        Press any key to begin.
    KeyboardComponent GetReadyResp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ThankYou
    TextComponent text_2
      color = black
      text = Thank You
      stopVal [duration (s)] = 3
      startVal [time (s)] = 0.0
      letterHeight = 40
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  Routine trial
    ImageComponent image
      pos = (0, 200)
      startVal [time (s)] = 0.0
      image [set every repeat] = $Stimulus
      size [set every repeat] = (556,144)
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    ImageComponent CFig1
      pos = (-350, -75)
      startVal [time (s)] = 0.0
      image [set every repeat] = $Choice1
      size = (150, 150)
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    ImageComponent CFig2
      pos = (-175, -75)
      startVal [time (s)] = 0.0
      image [set every repeat] = $Choice2
      size = (150, 150)
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    ImageComponent CFig3
      pos = (0, -75)
      startVal [time (s)] = 0.0
      image [set every repeat] = $Choice3
      size = (150, 150)
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    ImageComponent CFig4
      pos = (175, -75)
      startVal [time (s)] = 0.0
      image [set every repeat] = $Choice4
      size = (150, 150)
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    ImageComponent CFig5
      pos = (350, -75)
      startVal [time (s)] = 0.0
      image [set every frame] = $Choice5
      size = (150,150)
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    TextComponent Opt1
      color = black
      pos = (-365, -175)
      text = 1
      startVal [time (s)] = 0.0
      letterHeight = 40
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    TextComponent Opt2
      color = black
      pos = (-190, -175)
      text = 2
      startVal [time (s)] = 0.0
      letterHeight = 40
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    TextComponent Opt3
      color = black
      pos = (0, -175)
      text = 3
      startVal [time (s)] = 0.0
      letterHeight = 40
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    TextComponent Opt4
      color = black
      pos = (190, -175)
      text = 4
      startVal [time (s)] = 0.0
      letterHeight = 40
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    TextComponent OPt5
      color = black
      pos = (365, -175)
      text = 5
      startVal [time (s)] = 0.0
      letterHeight = 40
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    KeyboardComponent key_resp_2
      correctAns = $Corr
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = '1','2','3','4','5'
      startVal [time (s)] = 0.0
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  Routine crosshair
    TextComponent text
      color = black
      stopVal [duration (s)] = 0.5
      text = +
      startVal [time (s)] = 0.0
      letterHeight = 40
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  Routine Feedback1
    TextComponent Prac1Feedback
      color = black
      wrapWidth = 600
      pos = (300, 0)
      startVal [time (s)] = 0.0
      letterHeight = 30
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      text:
        Here the correct answer is 2.
        The paper is folded over once at a diagonal, starting from the upper right. Then the upper left corner is folded down. Therefore, the  hole punch gores through 4 total sheets symmetrically on each side of the diagonal.

        Press any key to continue.
    ImageComponent Prac1Fold
      pos = (0, 200)
      startVal [time (s)] = 0.0
      image = altAfold3.bmp
      size = (556, 144)
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    ImageComponent Prac1Choice
      pos = (-175, -75)
      startVal [time (s)] = 0.0
      image [set every repeat] = altAchoice32.bmp
      size = (150,150)
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    KeyboardComponent Prac1End
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Feedback2
    TextComponent Prac2Feedback
      color = black
      wrapWidth = 600
      pos = (300, 0)
      startVal [time (s)] = 0.0
      letterHeight = 30
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      text:
        Here the correct answer is 2. The paper is folded from the bottom right corner once, then folded again from the tapered right side. However, the hold punch misses the second fold.

        Press any key to continue.
    ImageComponent Prac2Fold
      pos = (0, 200)
      startVal [time (s)] = 0.0
      image = altAfold8.bmp
      size = (556, 144)
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    ImageComponent Prac2Choice
      pos = (-175, -75)
      startVal [time (s)] = 0.0
      image = altAchoice82.bmp
      size = (150, 150)
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    KeyboardComponent Prac2End
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions
    TextComponent Instruct
      color = black
      wrapWidth = 1000
      startVal [time (s)] = 0.0
      letterHeight = 40
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      text:
        Paper Folding

        For this task you will see a drawing of a piece of paper that gets folded multiple times.
        After folding, a hole is punched through the paper.

        Decide which of the five options at the bottom of the screen reflects the pattern of holes in the paper once it has been unfolded.

        Press any key to perform practice trials.
    KeyboardComponent StartPractice
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = CognitiveTaskSetupFiles - PaperFold.csv
    loopType = sequential
    nReps = 1
    Selected rows = [0]
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    conditions:
      [{'Stimulus': u'altAfold3.bmp', 'Choice5': u'altAchoice35.bmp', 'Choice1': u'altAchoice31.bmp', 'Choice2': u'altAchoice32.bmp', 'Choice3': u'altAchoice33.bmp', 'Choice4': u'altAchoice34.bmp', 'Corr': 1},
      {'Stimulus': u'altAfold8.bmp', 'Choice5': u'altAchoice85.bmp', 'Choice1': u'altAchoice81.bmp', 'Choice2': u'altAchoice82.bmp', 'Choice3': u'altAchoice83.bmp', 'Choice4': u'altAchoice84.bmp', 'Corr': 1},
      {'Stimulus': u'altBfold1.bmp', 'Choice5': u'altBchoice15.bmp', 'Choice1': u'altBchoice11.bmp', 'Choice2': u'altBchoice12.bmp', 'Choice3': u'altBchoice13.bmp', 'Choice4': u'altBchoice14.bmp', 'Corr': 1},
      {'Stimulus': u'altBfold2.bmp', 'Choice5': u'altBchoice25.bmp', 'Choice1': u'altBchoice21.bmp', 'Choice2': u'altBchoice22.bmp', 'Choice3': u'altBchoice23.bmp', 'Choice4': u'altBchoice24.bmp', 'Corr': 1},
      {'Stimulus': u'altBfold3.bmp', 'Choice5': u'altBchoice35.bmp', 'Choice1': u'altBchoice31.bmp', 'Choice2': u'altBchoice32.bmp', 'Choice3': u'altBchoice33.bmp', 'Choice4': u'altBchoice34.bmp', 'Corr': 1},
      {'Stimulus': u'altBfold4.bmp', 'Choice5': u'altBchoice45.bmp', 'Choice1': u'altBchoice41.bmp', 'Choice2': u'altBchoice42.bmp', 'Choice3': u'altBchoice43.bmp', 'Choice4': u'altBchoice44.bmp', 'Corr': 1},
      {'Stimulus': u'altBfold5.bmp', 'Choice5': u'altBchoice55.bmp', 'Choice1': u'altBchoice51.bmp', 'Choice2': u'altBchoice52.bmp', 'Choice3': u'altBchoice53.bmp', 'Choice4': u'altBchoice54.bmp', 'Corr': 1}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
    Routine trial
    Routine Feedback1
    Routine crosshair
  LoopTerminator trials
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = CognitiveTaskSetupFiles - PaperFold.csv
    loopType = sequential
    nReps = 1
    Selected rows = [1]
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    conditions:
      [{'Stimulus': u'altAfold3.bmp', 'Choice5': u'altAchoice35.bmp', 'Choice1': u'altAchoice31.bmp', 'Choice2': u'altAchoice32.bmp', 'Choice3': u'altAchoice33.bmp', 'Choice4': u'altAchoice34.bmp', 'Corr': 2},
      {'Stimulus': u'altAfold8.bmp', 'Choice5': u'altAchoice85.bmp', 'Choice1': u'altAchoice81.bmp', 'Choice2': u'altAchoice82.bmp', 'Choice3': u'altAchoice83.bmp', 'Choice4': u'altAchoice84.bmp', 'Corr': 2},
      {'Stimulus': u'altBfold1.bmp', 'Choice5': u'altBchoice15.bmp', 'Choice1': u'altBchoice11.bmp', 'Choice2': u'altBchoice12.bmp', 'Choice3': u'altBchoice13.bmp', 'Choice4': u'altBchoice14.bmp', 'Corr': 3},
      {'Stimulus': u'altBfold2.bmp', 'Choice5': u'altBchoice25.bmp', 'Choice1': u'altBchoice21.bmp', 'Choice2': u'altBchoice22.bmp', 'Choice3': u'altBchoice23.bmp', 'Choice4': u'altBchoice24.bmp', 'Corr': 1},
      {'Stimulus': u'altBfold3.bmp', 'Choice5': u'altBchoice35.bmp', 'Choice1': u'altBchoice31.bmp', 'Choice2': u'altBchoice32.bmp', 'Choice3': u'altBchoice33.bmp', 'Choice4': u'altBchoice34.bmp', 'Corr': 4},
      {'Stimulus': u'altBfold4.bmp', 'Choice5': u'altBchoice45.bmp', 'Choice1': u'altBchoice41.bmp', 'Choice2': u'altBchoice42.bmp', 'Choice3': u'altBchoice43.bmp', 'Choice4': u'altBchoice44.bmp', 'Corr': 3},
      {'Stimulus': u'altBfold5.bmp', 'Choice5': u'altBchoice55.bmp', 'Choice1': u'altBchoice51.bmp', 'Choice2': u'altBchoice52.bmp', 'Choice3': u'altBchoice53.bmp', 'Choice4': u'altBchoice54.bmp', 'Corr': 2}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
    Routine trial
    Routine Feedback2
    Routine crosshair
  LoopTerminator trials_3
  Routine GetReady
  Routine crosshair
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = CognitiveTaskSetupFiles - PaperFold.csv
    loopType = random
    nReps = 1
    Selected rows = [2,3,4,5,6,7,8,9,10,11,12,13]
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    conditions:
      [{'Stimulus': u'altAfold3.bmp', 'Choice5': u'altAchoice35.bmp', 'Choice1': u'altAchoice31.bmp', 'Choice2': u'altAchoice32.bmp', 'Choice3': u'altAchoice33.bmp', 'Choice4': u'altAchoice34.bmp', 'Corr': 2},
      {'Stimulus': u'altAfold8.bmp', 'Choice5': u'altAchoice85.bmp', 'Choice1': u'altAchoice81.bmp', 'Choice2': u'altAchoice82.bmp', 'Choice3': u'altAchoice83.bmp', 'Choice4': u'altAchoice84.bmp', 'Corr': 2},
      {'Stimulus': u'altBfold1.bmp', 'Choice5': u'altBchoice15.bmp', 'Choice1': u'altBchoice11.bmp', 'Choice2': u'altBchoice12.bmp', 'Choice3': u'altBchoice13.bmp', 'Choice4': u'altBchoice14.bmp', 'Corr': 3},
      {'Stimulus': u'altBfold2.bmp', 'Choice5': u'altBchoice25.bmp', 'Choice1': u'altBchoice21.bmp', 'Choice2': u'altBchoice22.bmp', 'Choice3': u'altBchoice23.bmp', 'Choice4': u'altBchoice24.bmp', 'Corr': 1},
      {'Stimulus': u'altBfold3.bmp', 'Choice5': u'altBchoice35.bmp', 'Choice1': u'altBchoice31.bmp', 'Choice2': u'altBchoice32.bmp', 'Choice3': u'altBchoice33.bmp', 'Choice4': u'altBchoice34.bmp', 'Corr': 4},
      {'Stimulus': u'altBfold4.bmp', 'Choice5': u'altBchoice45.bmp', 'Choice1': u'altBchoice41.bmp', 'Choice2': u'altBchoice42.bmp', 'Choice3': u'altBchoice43.bmp', 'Choice4': u'altBchoice44.bmp', 'Corr': 3},
      {'Stimulus': u'altBfold5.bmp', 'Choice5': u'altBchoice55.bmp', 'Choice1': u'altBchoice51.bmp', 'Choice2': u'altBchoice52.bmp', 'Choice3': u'altBchoice53.bmp', 'Choice4': u'altBchoice54.bmp', 'Corr': 2}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
    Routine trial
    Routine crosshair
  LoopTerminator trials_2
  Routine ThankYou
