PsychoPy2experiment version="1.85.1"
Settings
  Monitor = testMonitor
  color = $[1,1,1]
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = pix
  Window size (pixels) = [1440, 900]
  Full-screen window = False
  Show info dlg = False
  expName = PatternComparison
  Screen = 1
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Routines
  Routine Feedback
    CodeComponent code
      Begin Experiment:
        msg=''
      Begin Routine:
        if resp.corr:#stored on last run routine
          msg="Correct! RT=%.3f" %(resp.rt)
        else:
          msg="Oops! That was wrong"
    TextComponent text_3
      color = black
      text [set every repeat] = $msg
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 40
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  Routine ThankYou
    TextComponent text_6
      color = black
      text = Thank you
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
      letterHeight = 40
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  Routine trial
    ImageComponent imageL
      stopVal [duration (s)] = 3
      pos = (-300, 150)
      startVal [time (s)] = 0.0
      image [set every repeat] = $Figure1
      size = (300, 200)
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    ImageComponent imageR
      stopVal [duration (s)] = 3
      pos = (300, 150)
      startVal [time (s)] = 0.0
      image [set every repeat] = $Figure2
      size = (300, 200)
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    KeyboardComponent resp
      correctAns = $Corr
      storeCorrect = True
      stopVal [duration (s)] = 3
      forceEndRoutine = True
      allowedKeys = '1','2','z','x'
      startVal [time (s)] = 0.0
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    TextComponent Same
      color = black
      stopVal [duration (s)] = 3
      pos = (-200, -200)
      startVal [time (s)] = 0.0
      letterHeight = 40
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      text:
        "Same"
         1
    TextComponent DIfferent
      color = black
      stopVal [duration (s)] = 3
      pos = (200, -200)
      startVal [time (s)] = 0.0
      letterHeight = 40
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      text:
        "Different"
         2
  Routine PracticeText
    TextComponent text_4
      color = black
      text = First, will be a few trials with feedback for practice.
      stopVal [duration (s)] = 3
      startVal [time (s)] = 0.0
      letterHeight = 40
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  Routine CrossHair
    TextComponent text
      color = black
      text = +
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      letterHeight = 40
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  Routine StartRun
    TextComponent text_5
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 40
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      text:
        You will now begine the real experiment with no feedback.

        Press any key to begin.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions
    TextComponent text_2
      wrapWidth = 800
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 40
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      text:
        You will be presented with two figures.
        If the figures are the same, press "1".
        If they are different, press "2".

        Press any key to begin.
    KeyboardComponent Begin
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  Routine PracticeText
  LoopInitiator Practice loopType="TrialHandler"
    conditionsFile = CognitiveTaskSetupFiles - PCtest.csv
    loopType = random
    nReps = 2
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    conditions:
      [{'Difficulty': 1, 'Figure1': u'AFig1a.bmp', 'Figure2': u'AFig1b.bmp', 'Corr': 0},
      {'Difficulty': 1, 'Figure1': u'AFig1a.bmp', 'Figure2': u'AFig1a.bmp', 'Corr': 1},
      {'Difficulty': 1, 'Figure1': u'AFig1b.bmp', 'Figure2': u'AFig1b.bmp', 'Corr': 1}]
    Routine trial
    Routine Feedback
    Routine CrossHair
  LoopTerminator Practice
  Routine Instructions
  Routine StartRun
  LoopInitiator Run loopType="TrialHandler"
    conditionsFile = CognitiveTaskSetupFiles - PCtest.csv
    loopType = random
    nReps = 1
    Selected rows = ['1','2','3']
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    conditions:
      [{'Difficulty': 1, 'Figure1': u'AFig1a.bmp', 'Figure2': u'AFig1b.bmp', 'Corr': u'x'},
      {'Difficulty': 1, 'Figure1': u'AFig1a.bmp', 'Figure2': u'AFig1a.bmp', 'Corr': u'z'},
      {'Difficulty': 1, 'Figure1': u'AFig1b.bmp', 'Figure2': u'AFig1b.bmp', 'Corr': u'z'}]
    Routine trial
    Routine CrossHair
  LoopTerminator Run
  Routine ThankYou
