PsychoPy2experiment version="1.85.3"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  expName = ResponseTimeTest
  Screen = 1
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Routines
  Routine trial
    TextComponent text
      color = red
      text = +
      stopVal [duration (s)] = 0.2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'left'
      startVal [time (s)] = 0.0
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  Routine blank
    TextComponent text_2
      text = +
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  Routine blank
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 20
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    Routine trial
    Routine blank
  LoopTerminator trials
