PsychoPy2experiment version="1.90.1"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = pix
  Window size (pixels) = [900, 700]
  Full-screen window = False
  Show info dlg = False
  expName = SRTRecog
  Screen = 1
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Routines
  Routine trial
    MouseComponent mouse
      timeRelativeTo = routine
      forceEndRoutineOnPress = never
      clickable = text1,text2
      startVal [time (s)] = 0.0
      saveParamsClickable = name,text
      saveMouseState = on click
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    TextComponent text1
      text = Word1
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 45
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    CodeComponent code1
      Each Frame:
        if mouse.isPressedIn(text1):
            text1.setColor((0, 128, 255), 'rgb255')
        if mouse.isPressedIn(text2):
            text2.setColor((0, 128, 255), 'rgb255')
    TextComponent text2
      text = Word2
      pos = (0, 100)
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 45
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      discard previous = False
      allowedKeys = 'return'
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine thanks
    TextComponent text
      text = Thank You
      stopVal [duration (s)] = 3
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 45
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  Routine Instr
    TextComponent InstrTest
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Any text

        including line breaks
    KeyboardComponent InstrResp
      forceEndRoutine = True
      discard previous = False
      allowedKeys = 'return'
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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Flow
  Routine Instr
  Routine trial
  Routine thanks
