PsychoPy2experiment version="1.90.1"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  expName = SRTRecogSequentialPres
  Screen = 1
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Routines
  Routine trial
    TextComponent Instr
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 45
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      text:
        Please read each word and state yes or no out loud whether or not each word part of the word list you studied.

        Press any key to begin
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine word
    TextComponent text
      text [set every repeat] = $Word
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 45
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    KeyboardComponent key_resp_3
      correctAns = $Corr
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'left','right'
      startVal [time (s)] = 0.0
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    SoundComponent sound_1
      sound = A
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
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  Routine Crosshair
    TextComponent text_2
      text = +
      stopVal [duration (s)] = 0.5
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 45
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  Routine ThankYou
    TextComponent text_3
      text = Thank you
      stopVal [duration (s)] = 3
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 45
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Flow
  Routine trial
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = SelectiveReminding/RecogWordList.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([(u'Word', u'TURTLE')]),
      OrderedDict([(u'Word', u'GOAT')]),
      OrderedDict([(u'Word', u'RAT')]),
      OrderedDict([(u'Word', u'SQUIRREL')]),
      OrderedDict([(u'Word', u'LION')]),
      OrderedDict([(u'Word', u'ANTELOPE')]),
      OrderedDict([(u'Word', u'BEAR')]),
      OrderedDict([(u'Word', u'LLAMA')]),
      OrderedDict([(u'Word', u'MOUSE')]),
      OrderedDict([(u'Word', u'PIG')]),
      OrderedDict([(u'Word', u'DONKEY')]),
      OrderedDict([(u'Word', u'BEAVER')]),
      OrderedDict([(u'Word', u'WOLF')]),
      OrderedDict([(u'Word', u'DOG')]),
      OrderedDict([(u'Word', u'BUFFALO')]),
      OrderedDict([(u'Word', u'FOX')]),
      OrderedDict([(u'Word', u'LAMB')]),
      OrderedDict([(u'Word', u'RACOON')]),
      OrderedDict([(u'Word', u'OTTER')]),
      OrderedDict([(u'Word', u'SHEEP')]),
      OrderedDict([(u'Word', u'CHEETAH')]),
      OrderedDict([(u'Word', u'RHINO')]),
      OrderedDict([(u'Word', u'ELEPHANT')]),
      OrderedDict([(u'Word', u'HORSE')])]
    Routine word
    Routine Crosshair
  LoopTerminator trials
  Routine ThankYou
