PsychoPy2experiment version="1.90.1"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1440, 900]
  Full-screen window = False
  Save log file = False
  Show info dlg = False
  expName = SelectiveReminding
  Screen = 1
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Routines
  Routine trial
    TextComponent text
      text [set every repeat] = $Word
      stopVal [duration (s)] = 1
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 45
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  Routine EnterResponses
    TextComponent text_2
      text = Waiting
      stopVal [duration (s)] = 4
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_2
      correctAns = $corr
      stopVal [duration (s)] = 4
      forceEndRoutine = False
      discard previous = False
      allowedKeys = '1','2','3','4','5,','6'
      startVal [time (s)] = 0.0
      store = all keys
      syncScreenRefresh = False
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  Routine Instructions
    TextComponent instr
      wrapWidth = 1000
      stopVal [duration (s)] = 1.0
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 45
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      text:
        You will see a list of 12 words, presented one by one.

        After you see the list you will have to recall as many words as you can
        by speaking them out loud.

        For those items that were not recalled during the current trial, the words will be repeated and you
        are to again recall as many of the original list words as they can.
        This procedure is repeated for 5 trials.
Flow
  Routine Instructions
  LoopInitiator Blocks loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 5
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = ../SelectiveReminding/WordList.csv
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([(u'Word', u'DOG'), (u'corr', u'1')]),
        OrderedDict([(u'Word', u'FOX'), (u'corr', u'2')]),
        OrderedDict([(u'Word', u'HORSE'), (u'corr', u'3')]),
        OrderedDict([(u'Word', u'BUFFALO'), (u'corr', u'4')]),
        OrderedDict([(u'Word', u'LION'), (u'corr', u'5')]),
        OrderedDict([(u'Word', u'RHINOCEROS'), (u'corr', u'6')]),
        OrderedDict([(u'Word', u'ELEPHANT'), (u'corr', u'7')]),
        OrderedDict([(u'Word', u'ANTELOPE'), (u'corr', u'8')]),
        OrderedDict([(u'Word', u'BEAR'), (u'corr', u'9')]),
        OrderedDict([(u'Word', u'LAMB'), (u'corr', u'a')]),
        OrderedDict([(u'Word', u'RAT'), (u'corr', u'b')]),
        OrderedDict([(u'Word', u'RACCOON'), (u'corr', u'c')])]
      Routine trial
    LoopTerminator trials
    Routine EnterResponses
  LoopTerminator Blocks
