PsychoPy2experiment version="1.85.1"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  expName = SemanticRichnessBLockBasedv1
  Screen = 1
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Routines
  Routine WordStimulus
    TextComponent WordStim
      text [set every repeat] = $Concept
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    KeyboardComponent Response
      correctAns = $Corr
      storeCorrect = True
      stopVal [duration (s)] = 1.5
      forceEndRoutine = True
      allowedKeys = '1','2','left','down'
      startVal [time (s)] = 0.0
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  Routine CountDown
    TextComponent Three
      text = 3
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    TextComponent Two
      text = 2
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 1
      letterHeight = 0.2
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    TextComponent One
      text = 1
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 2
      letterHeight = 0.2
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  Routine ThankYou
    TextComponent ThankYouText
      text = Thank you
      stopVal [duration (s)] = 5
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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  Routine Intro
    TextComponent Instructions
      startVal [time (s)] = 0.0
      letterHeight = 0.12
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      text:
        Press [left] if the word is of a living thing.
        Press [down] if the word is of a non-living thing.

        Press [5] to start.
    KeyboardComponent StartExperimentResponse
      forceEndRoutine = True
      allowedKeys = '5'
      startVal [time (s)] = 0.0
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  Routine WhiteCrosshair
    TextComponent WhiteCrossHairStim
      text = +
      stopVal [duration (s)] = 17
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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  Routine ExtraTimeWhiteCH
    TextComponent text
      text = +
      stopVal [duration (s)] = 3
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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  Routine RedCrosshair
    TextComponent RedCrossHairStim
      color = red
      text = +
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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Flow
  Routine Intro
  Routine WhiteCrosshair
  LoopInitiator Blocks loopType="TrialHandler"
    conditionsFile = Run1Blocks.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'rows': u'0:5'},
      {'rows': u'6:11'},
      {'rows': u'12:17'},
      {'rows': u'18:23'},
      {'rows': u'24:29'},
      {'rows': u'30:35'},
      {'rows': u'36:41'},
      {'rows': u'42:46'},
      {'rows': u'48:53'},
      {'rows': u'54:59'}]
    Routine CountDown
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = StimulusListRun1.csv
      loopType = random
      nReps = 1
      Selected rows = $rows
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      conditions:
        [{'Count': 1, 'SemanticCategory': u'Living', 'IMG': u'435', 'BG_Freq_By_Pos': u'1,169', 'Length': 5, 'CNC': u'446', 'Block': 1, 'Concept': u'beech', 'Run': 1, 'NSNcategory': u'H', 'LgSUBTLWF': 1.2790000000000001, 'Ortho_N': 4, 'FAM': u'374', 'Freq': 1},
        {'Count': 2, 'SemanticCategory': u'Living', 'IMG': u'-', 'BG_Freq_By_Pos': u'859', 'Length': 5, 'CNC': u'-', 'Block': 1, 'Concept': u'beets', 'Run': 1, 'NSNcategory': u'H', 'LgSUBTLWF': 1.724, 'Ortho_N': 6, 'FAM': u'-', 'Freq': 1},
        {'Count': 3, 'SemanticCategory': u'Living', 'IMG': u'567', 'BG_Freq_By_Pos': u'1,820', 'Length': 11, 'CNC': u'642', 'Block': 1, 'Concept': u'cauliflower ', 'Run': 1, 'NSNcategory': u'H', 'LgSUBTLWF': 1.462, 'Ortho_N': 0, 'FAM': u'462', 'Freq': 1},
        {'Count': 4, 'SemanticCategory': u'Living', 'IMG': u'-', 'BG_Freq_By_Pos': u'2,280', 'Length': 6, 'CNC': u'-', 'Block': 1, 'Concept': u'celery', 'Run': 1, 'NSNcategory': u'H', 'LgSUBTLWF': 1.982, 'Ortho_N': 0, 'FAM': u'-', 'Freq': 1},
        {'Count': 5, 'SemanticCategory': u'Non-Living', 'IMG': u'-', 'BG_Freq_By_Pos': u'1282', 'Length': 7, 'CNC': u'-', 'Block': 1, 'Concept': u'cheddar', 'Run': 1, 'NSNcategory': u'H', 'LgSUBTLWF': 1.964, 'Ortho_N': 0, 'FAM': u'-', 'Freq': 1},
        {'Count': 6, 'SemanticCategory': u'Non-Living', 'IMG': u'-', 'BG_Freq_By_Pos': u'3,570', 'Length': 9, 'CNC': u'-', 'Block': 1, 'Concept': u'margarine', 'Run': 1, 'NSNcategory': u'H', 'LgSUBTLWF': 1.5190000000000001, 'Ortho_N': 0, 'FAM': u'-', 'Freq': 1}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
      Routine WordStimulus
      Routine RedCrosshair
    LoopTerminator trials
    Routine WhiteCrosshair
  LoopTerminator Blocks
  Routine ExtraTimeWhiteCH
  Routine ThankYou
