PsychoPy2experiment version="1.85.1"
Settings
  Monitor = testMonitor
  Experiment info = {u'ParticipantID': u'99999999'}
  Units = use prefs
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  Save csv file = True
  Save log file = False
  Data filename = u'data/%s_%s_%s' % (expInfo['ParticipantID'], expName, expInfo['date'])
  expName = LexicalDecision
  Screen = 1
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Routines
  Routine Wait
    TextComponent Intruct
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Press the left arrow for biological objects.
        Press the down arrow for non-biological objects.

        Press 5 to start.
        Press Escape at any time to interupt and stop the experiment.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      discard previous = False
      allowedKeys = '5'
      startVal [time (s)] = 0.0
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  Routine Trial
    TextComponent text
      text [set every repeat] = $Word
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    KeyboardComponent key_resp_3
      correctAns = $Corr
      storeCorrect = True
      stopVal [duration (s)] = 1.75
      forceEndRoutine = False
      allowedKeys = 'left','down','1','2'
      startVal [time (s)] = 0.0
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    TextComponent text_2
      text = +
      stopVal [duration (s)] = 0.25
      startVal [time (s)] = 1.5
      letterHeight = 0.2
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  Routine WhiteCrossHair
    TextComponent WhiteCrossHair1
      text = +
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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  Routine ThankYou
    TextComponent text_3
      text = Thank You
      stopVal [duration (s)] = 3
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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  Routine ITI
    TextComponent ITICrossHair
      text = +
      stopVal [duration (s)] = $ITI-0.25
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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Flow
  Routine Wait
  Routine WhiteCrossHair
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = LexicalRun1.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Word': u'spider', 'IMG': 597, 'Phono_N': 4, 'Richness': u'L', 'NoF': 16, 'ITI': 3.84, 'LgSUBTLWF': 2.713, 'freqQ': 4, 'BG_Freq_By_Pos': 2305, 'Length': 6, 'CNC': 607, 'Corr': u'left', 'Sem_N': 1858, 'cognate': u'n', 'Animate': u'B', 'FAM': 526, 'Order': 1, 'Ortho_N': 0, 'NoS': 3},
      {'Word': u'axe', 'IMG': 597, 'Phono_N': 6, 'Richness': u'L', 'NoF': 16, 'ITI': 2.54, 'LgSUBTLWF': 2.398, 'freqQ': 3, 'BG_Freq_By_Pos': 46, 'Length': 3, 'CNC': 623, 'Corr': u'down', 'Sem_N': 1856, 'cognate': u'y', 'Animate': u'A', 'FAM': 461, 'Order': 2, 'Ortho_N': 9, 'NoS': 3},
      {'Word': u'worm', 'IMG': 578, 'Phono_N': 10, 'Richness': u'H', 'NoF': 11, 'ITI': 2.4, 'LgSUBTLWF': 2.714, 'freqQ': 4, 'BG_Freq_By_Pos': 1103, 'Length': 4, 'CNC': 611, 'Corr': u'left', 'Sem_N': 1519, 'cognate': u'n', 'Animate': u'B', 'FAM': 498, 'Order': 3, 'Ortho_N': 9, 'NoS': 5},
      {'Word': u'missile', 'IMG': 602, 'Phono_N': 7, 'Richness': u'L', 'NoF': 17, 'ITI': 1.95, 'LgSUBTLWF': 1.82, 'freqQ': 1, 'BG_Freq_By_Pos': 2432, 'Length': 7, 'CNC': 597, 'Corr': u'down', 'Sem_N': 2059, 'cognate': u'y', 'Animate': u'A', 'FAM': 504, 'Order': 4, 'Ortho_N': 1, 'NoS': 2},
      {'Word': u'cabbage', 'IMG': 573, 'Phono_N': 0, 'Richness': u'H', 'NoF': 16, 'ITI': 1.46, 'LgSUBTLWF': 2.173, 'freqQ': 2, 'BG_Freq_By_Pos': 1324, 'Length': 7, 'CNC': 611, 'Corr': u'left', 'Sem_N': 1375, 'cognate': u'n', 'Animate': u'B', 'FAM': 504, 'Order': 5, 'Ortho_N': 0, 'NoS': 4}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
    Routine Trial
    Routine ITI
  LoopTerminator trials
  Routine WhiteCrossHair
  Routine ThankYou
