PsychoPy2experiment version="1.85.3"
Settings
  Monitor = testMonitor
  color = grey
  Experiment info = {u'session': u'01', u'participant': u''}
  Units = norm
  Save excel file = True
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  Data filename = u'data' + os.sep + '%s_%s' % (expInfo['participant'], expInfo['date'])
  expName = StroopColor
  logging level = warning
  Screen = 1
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Routines
  Routine trial
    KeyboardComponent resp
      correctAns = $Corr
      storeCorrect = True
      stopVal [duration (s)] = 6
      forceEndRoutine = True
      allowedKeys = 'r','y','b','g'
      startVal [time (s)] = 0.2
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    PolygonComponent polygon
      fillColor [set every repeat] = $ShapeColor
      interpolate = nearest
      lineColor = $[-1,-1,-1]
      startVal [time (s)] = 0.2
      size = (0.5, 0.3)
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  Routine instruct
    TextComponent instrText
      color = $[1, 1, 1]
      startVal [time (s)] = 0
      letterHeight = 0.1
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      text:
        Now you will do the task.

        It will be exactly like the practice except you won't get feedback.
        Press the R key if the color is Red
        Press the Y key if the color is Yellow
        Press the G key if the color is Green
        Press the B key if the color is Blue

        (Esc will quit)
        Press any key to continue
    KeyboardComponent ready
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine instructPractice
    TextComponent instr1
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        In this task, color patches will appear in the center of the screen.

        You need to indicate the color of the patch.

        Press the R key if the color is Red
        Press the Y key if the color is Yellow
        Press the G key if the color is Green
        Press the B key if the color is Blue

        (Esc will quit)
        Let's start with a few practice trials
        Press any key to continue
    KeyboardComponent ready1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine thanks
    TextComponent thanksText
      color = $[1, 1, 1]
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      font = arial
      letterHeight = 0.2
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      text:
        This is the end of the experiment.

        Thanks!
  Routine feedback
    CodeComponent message
      Begin Experiment:
        #msg variable just needs some value at start
        msg=''
      Begin Routine:
        if resp.corr:#stored on last run routine
          msg="Correct! RT=%.3f" %(resp.rt)
        else:
          msg="Oops! That was wrong"
    TextComponent feedback_2
      text [set every repeat] = $msg
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  Routine instructPractice
  LoopInitiator practice loopType="TrialHandler"
    conditionsFile = Stroop - Practice1WordColor.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'ShapeColor': [1, 1, 0], 'TextColor': u'Yellow', 'Word': u'Blue', 'Corr': u'y', 'Congruency': u'Incon'},
      {'ShapeColor': [1, 1, 0], 'TextColor': u'Yellow', 'Word': u'Yellow', 'Corr': u'y', 'Congruency': u'Con'},
      {'ShapeColor': [0, 1, 0], 'TextColor': u'Green', 'Word': u'Blue', 'Corr': u'g', 'Congruency': u'Incon'},
      {'ShapeColor': [1, 1, 0], 'TextColor': u'Yellow', 'Word': u'Green', 'Corr': u'y', 'Congruency': u'Incon'},
      {'ShapeColor': [1, 0, 0], 'TextColor': u'Red', 'Word': u'Red', 'Corr': u'r', 'Congruency': u'Con'},
      {'ShapeColor': [0, 0, 1], 'TextColor': u'Blue', 'Word': u'Green', 'Corr': u'b', 'Congruency': u'Incon'},
      {'ShapeColor': [0, 0, 1], 'TextColor': u'Blue', 'Word': u'Red', 'Corr': u'b', 'Congruency': u'Incon'},
      {'ShapeColor': [0, 1, 0], 'TextColor': u'Green', 'Word': u'Green', 'Corr': u'g', 'Congruency': u'Con'},
      {'ShapeColor': [1, 0, 0], 'TextColor': u'Red', 'Word': u'Green', 'Corr': u'r', 'Congruency': u'Incon'},
      {'ShapeColor': [0, 0, 1], 'TextColor': u'Blue', 'Word': u'Blue', 'Corr': u'b', 'Congruency': u'Con'}]
    Routine trial
    Routine feedback
  LoopTerminator practice
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Stroop - ColorWord.csv
    loopType = random
    nReps = 10
    endPoints = [1, 2]
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    conditions:
      [{'ShapeColor': [1, -1, -1], 'TextColor': u'Red', 'Word': u'Red', 'Corr': u'r', 'Congruency': u'Con'},
      {'ShapeColor': [1, 1, -1], 'TextColor': u'Yellow', 'Word': u'Red', 'Corr': u'y', 'Congruency': u'Incon'},
      {'ShapeColor': [-1, -1, 1], 'TextColor': u'Blue', 'Word': u'Red', 'Corr': u'b', 'Congruency': u'Incon'},
      {'ShapeColor': [-1, 1, -1], 'TextColor': u'Green', 'Word': u'Red', 'Corr': u'g', 'Congruency': u'Incon'},
      {'ShapeColor': [1, -1, -1], 'TextColor': u'Red', 'Word': u'Yellow', 'Corr': u'r', 'Congruency': u'Incon'},
      {'ShapeColor': [1, 1, -1], 'TextColor': u'Yellow', 'Word': u'Yellow', 'Corr': u'y', 'Congruency': u'Con'},
      {'ShapeColor': [-1, -1, 1], 'TextColor': u'Blue', 'Word': u'Yellow', 'Corr': u'b', 'Congruency': u'Incon'},
      {'ShapeColor': [-1, 1, -1], 'TextColor': u'Green', 'Word': u'Yellow', 'Corr': u'g', 'Congruency': u'Incon'},
      {'ShapeColor': [1, -1, -1], 'TextColor': u'Red', 'Word': u'Blue', 'Corr': u'r', 'Congruency': u'Incon'},
      {'ShapeColor': [1, 1, -1], 'TextColor': u'Yellow', 'Word': u'Blue', 'Corr': u'y', 'Congruency': u'Incon'},
      {'ShapeColor': [-1, -1, 1], 'TextColor': u'Blue', 'Word': u'Blue', 'Corr': u'b', 'Congruency': u'Con'},
      {'ShapeColor': [-1, 1, -1], 'TextColor': u'Green', 'Word': u'Blue', 'Corr': u'g', 'Congruency': u'Incon'},
      {'ShapeColor': [1, -1, -1], 'TextColor': u'Red', 'Word': u'Green', 'Corr': u'r', 'Congruency': u'Incon'},
      {'ShapeColor': [1, 1, -1], 'TextColor': u'Yellow', 'Word': u'Green', 'Corr': u'y', 'Congruency': u'Incon'}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
    Routine trial
  LoopTerminator trials
  Routine thanks
