PsychoPy2experiment version="1.90.3"
Settings
  Monitor = testMonitor
  color = darkgrey
  Experiment info = {u'session': u'01', u'participant': u''}
  Units = norm
  Save excel file = True
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  Data filename = u'data' + os.sep + '%s_%s' % (expInfo['participant'], expInfo['date'])
  expName = StroopWord
  logging level = warning
  Screen = 1
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Routines
  Routine trial
    TextComponent word
      color [set every repeat] = black
      text [set every repeat] = $TextColor
      startVal [time (s)] = 0
      letterHeight = 0.2
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    KeyboardComponent resp
      correctAns = $CorrColor
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'v','b','n','m'
      startVal [time (s)] = 0
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  Routine instruct
    TextComponent instrText
      color = $[1, 1, 1]
      startVal [time (s)] = 0
      letterHeight = 0.1
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      text:
        Now you will do the task.
        It will be exactly like the practice except you won't get feedback.
        Press the R key if the word is Red
        Press the Y key if the word is Yellow
        Press the G key if the word is Green
        Press the B key if the word is Blue

        (Esc will quit)
        Press any key to continue
    KeyboardComponent ready
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine instructPractice
    TextComponent instr1
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        In this task, words will appear in the center of the screen, like this:
        BLUE
        You need to indicate what word is written.

        Press the R key if the word is Red
        Press the Y key if the word is Yellow
        Press the G key if the word is Green
        Press the B key if the word is Blue

        (Esc will quit)
        Let's start with a few practice trials
        Press any key to continue
    KeyboardComponent ready1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine thanks
    TextComponent thanksText
      color = $[1, 1, 1]
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      font = arial
      letterHeight = 0.2
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      text:
        This is the end of the experiment.

        Thanks!
  Routine feedback
    CodeComponent message
      Begin Experiment:
        #msg variable just needs some value at start
        msg=''
      Begin Routine:
        if resp.corr:#stored on last run routine
          msg="Correct! RT=%.3f" %(resp.rt)
        else:
          msg="Oops! That was wrong"
    TextComponent feedback_2
      text [set every repeat] = $msg
      stopVal [duration (s)] = 0.4
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  Routine instructPractice
  LoopInitiator practice loopType="TrialHandler"
    conditionsFile = StroopPractice1WordColor.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([(u'Word', u'Blue'), (u'TextColor', u'Yellow'), (u'Congruency', u'Incon'), (u'CorrColor', u'b'), (u'CorrWord', u'm'), (u'ShapeColor', [1, 1, -1])]),
      OrderedDict([(u'Word', u'Yellow'), (u'TextColor', u'Yellow'), (u'Congruency', u'Con'), (u'CorrColor', u'b'), (u'CorrWord', u'b'), (u'ShapeColor', [1, 1, -1])]),
      OrderedDict([(u'Word', u'Blue'), (u'TextColor', u'Green'), (u'Congruency', u'Incon'), (u'CorrColor', u'n'), (u'CorrWord', u'm'), (u'ShapeColor', [-1, 0.6, -1])]),
      OrderedDict([(u'Word', u'Green'), (u'TextColor', u'Yellow'), (u'Congruency', u'Incon'), (u'CorrColor', u'b'), (u'CorrWord', u'n'), (u'ShapeColor', [1, 1, -1])]),
      OrderedDict([(u'Word', u'Red'), (u'TextColor', u'Red'), (u'Congruency', u'Con'), (u'CorrColor', u'v'), (u'CorrWord', u'v'), (u'ShapeColor', [1, -1, -1])]),
      OrderedDict([(u'Word', u'Green'), (u'TextColor', u'Blue'), (u'Congruency', u'Incon'), (u'CorrColor', u'm'), (u'CorrWord', u'n'), (u'ShapeColor', [-1, -1, 1])]),
      OrderedDict([(u'Word', u'Red'), (u'TextColor', u'Blue'), (u'Congruency', u'Incon'), (u'CorrColor', u'm'), (u'CorrWord', u'v'), (u'ShapeColor', [-1, -1, 1])]),
      OrderedDict([(u'Word', u'Green'), (u'TextColor', u'Green'), (u'Congruency', u'Con'), (u'CorrColor', u'n'), (u'CorrWord', u'n'), (u'ShapeColor', [-1, 0.6, -1])]),
      OrderedDict([(u'Word', u'Green'), (u'TextColor', u'Red'), (u'Congruency', u'Incon'), (u'CorrColor', u'v'), (u'CorrWord', u'n'), (u'ShapeColor', [1, -1, -1])])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
    Routine trial
    Routine feedback
  LoopTerminator practice
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Stroop - ColorWord.csv
    loopType = random
    nReps = 10
    endPoints = [1, 2]
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    conditions:
      [OrderedDict([(u'Word', u'Red'), (u'TextColor', u'Red'), (u'Congruency', u'Con'), (u'CorrWord', u'v'), (u'CorrColor', u'v'), (u'ShapeColor', [1, -1, -1])]),
      OrderedDict([(u'Word', u'Red'), (u'TextColor', u'Yellow'), (u'Congruency', u'Incon'), (u'CorrWord', u'm'), (u'CorrColor', u'v'), (u'ShapeColor', [1, 1, -1])]),
      OrderedDict([(u'Word', u'Red'), (u'TextColor', u'Blue'), (u'Congruency', u'Incon'), (u'CorrWord', u'n'), (u'CorrColor', u'v'), (u'ShapeColor', [-1, -1, 1])]),
      OrderedDict([(u'Word', u'Red'), (u'TextColor', u'Green'), (u'Congruency', u'Incon'), (u'CorrWord', u'b'), (u'CorrColor', u'v'), (u'ShapeColor', [-1, 0.6, -1])]),
      OrderedDict([(u'Word', u'Yellow'), (u'TextColor', u'Red'), (u'Congruency', u'Incon'), (u'CorrWord', u'v'), (u'CorrColor', u'b'), (u'ShapeColor', [1, -1, -1])]),
      OrderedDict([(u'Word', u'Yellow'), (u'TextColor', u'Yellow'), (u'Congruency', u'Con'), (u'CorrWord', u'm'), (u'CorrColor', u'b'), (u'ShapeColor', [1, 1, -1])]),
      OrderedDict([(u'Word', u'Yellow'), (u'TextColor', u'Blue'), (u'Congruency', u'Incon'), (u'CorrWord', u'n'), (u'CorrColor', u'b'), (u'ShapeColor', [-1, -1, 1])]),
      OrderedDict([(u'Word', u'Yellow'), (u'TextColor', u'Green'), (u'Congruency', u'Incon'), (u'CorrWord', u'b'), (u'CorrColor', u'b'), (u'ShapeColor', [-1, 0.6, -1])]),
      OrderedDict([(u'Word', u'Blue'), (u'TextColor', u'Red'), (u'Congruency', u'Incon'), (u'CorrWord', u'v'), (u'CorrColor', u'm'), (u'ShapeColor', [1, -1, -1])])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
    Routine trial
  LoopTerminator trials
  Routine thanks
