PsychoPy2experiment version="1.85.1"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  expName = Test2
  Screen = 1
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Routines
  Routine trial
    TextComponent text
      text [set every repeat] = $Word
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Stroop - Practice1WordColor.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'ShapeColor': [1, 1, -1], 'TextColor': u'Yellow', 'Word': u'Blue', 'Corr': u'm', 'Congruency': u'Incon'},
      {'ShapeColor': [1, 1, -1], 'TextColor': u'Yellow', 'Word': u'Yellow', 'Corr': u'm', 'Congruency': u'Con'},
      {'ShapeColor': [-1, 0.6, -1], 'TextColor': u'Green', 'Word': u'Blue', 'Corr': u'b', 'Congruency': u'Incon'},
      {'ShapeColor': [1, 1, -1], 'TextColor': u'Yellow', 'Word': u'Green', 'Corr': u'm', 'Congruency': u'Incon'},
      {'ShapeColor': [1, -1, -1], 'TextColor': u'Red', 'Word': u'Red', 'Corr': u'r', 'Congruency': u'Con'},
      {'ShapeColor': [-1, -1, 1], 'TextColor': u'Blue', 'Word': u'Green', 'Corr': u'n', 'Congruency': u'Incon'},
      {'ShapeColor': [-1, -1, 1], 'TextColor': u'Blue', 'Word': u'Red', 'Corr': u'n', 'Congruency': u'Incon'},
      {'ShapeColor': [-1, 0.6, -1], 'TextColor': u'Green', 'Word': u'Green', 'Corr': u'b', 'Congruency': u'Con'},
      {'ShapeColor': [1, -1, -1], 'TextColor': u'Red', 'Word': u'Green', 'Corr': u'r', 'Congruency': u'Incon'},
      {'ShapeColor': [-1, -1, 1], 'TextColor': u'Blue', 'Word': u'Blue', 'Corr': u'n', 'Congruency': u'Con'}]
    Routine trial
  LoopTerminator trials
