PsychoPy2experiment version="1.90.1"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [800, 600]
  Full-screen window = False
  Show info dlg = False
  expName = TestingStaircase
  Screen = 1
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Routines
  Routine trial
    TextComponent text
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 45
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      text [set every repeat]:
        $level
    KeyboardComponent key_resp_2
      correctAns = right
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'left','right'
      startVal [time (s)] = 0.0
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    CodeComponent code
      Begin Experiment:
        OtherLevel=0
      Each Frame:
        OtherLevel=20-level
  Routine CH
    TextComponent text_2
      text = +
      stopVal [duration (s)] = 0.3
      startVal [time (s)] = 0.0
      letterHeight = 45
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Flow
  LoopInitiator trials loopType="StairHandler"
    min value = 2
    N reversals = 0
    loopType = staircase
    nReps = 30
    start value = 3
    N up = 1
    max value = 10
    N down = 2
    step type = lin
    step sizes = 1
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    Routine trial
    Routine CH
  LoopTerminator trials
