PsychoPy2experiment version="3.0.5"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = test
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Routines
  Routine trial
    PolygonComponent polygon
      fillColor = $[-1,-1,-1]
      shape = rectangle
      size = (0.3, 0.2)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent text
      letterHeight = 60
      startVal [time (s)] = 0.0
      text = X
      units = pix
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    MouseComponent mouse
      clickable = text
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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Flow
  Routine trial
